<ReactionScheme>
  <!-- fit 662 -->
<!-- First version of merges Gq Gs coupled pathway reactions
     when reactions differ between the models, notes indicate which was source.
     Either StriatumCRCNS/StochasticSP1/MSPNfinalxml/MSPNreactions_4spine_new50.xml for Gs
     or MURI/BoHung/FinalMarch2012/mglu_2ag_reac12mar20desens025.xml for Gq
phosphatase reactions take from revision of Gs to improve Ca dep dphos of Dp32-->

<!-- Molecules species and diffusion constants -->


<!-- calcium reaction subset, to adjust for proper basal calcium -->
<!-- pKal pathway  -->
<Specie name="Kal" id="Kal" kdiff="0.0" kdiffunit="mu2/s" />
<Specie name="KalCKpCamCa4" id="KalCKpCamCa4"  kdiff="0.0" kdiffunit="mu2/s" />
<Specie name="KalCKCamCa4" id="KalCKCamCa4" kdiff="0" kdiffunit="mu2/s" />
<Specie name="KalPKAc"   id="KalPKAc"    kdiff="0"   kdiffunit="mu2/s"/>
<Specie name="pKalRac" id="pKalRac"  kdiff="0.0" kdiffunit="mu2/s" />
<Specie name="pKal" id="pKal" kdiff="0.0" kdiffunit="mu2/s" />
<Specie name="pKalPP1" id="pKalPP1" kdiff="0.0" kdiffunit="mu2/s" />

<!-- Rac pathway -->
<Specie name="RacGTP" id="RacGTP" kdiff="0.25" kdiffunit="mu2/s" />
<Specie name="RCap" id="RCap" kdiff="0.0" kdiffunit="mu2/s" />
<Specie name="RCapGDP" id="RCapGDP" kdiff="0.0" kdiffunit="mu2/s" />
<Specie name="RacGDP" id="RacGDP" kdiff="10" kdiffunit="mu2/s" />
<Specie name="RacGap" id="RacGap" kdiff="0.25" kdiffunit="mu2/s" />
<Specie name="Gap" id="Gap" kdiff="0.25" kdiffunit="mu2/s" />

<!-- PAK pathway -->
<Specie name="PAK" id="PAK" kdiff="0.25" kdiffunit="mu2/s" />
<Specie name="RacPAK" id="RacPAK" kdiff="0.25" kdiffunit="mu2/s" />

<!-- SSH pathway -->
<Specie name="SCap"        id="SCap"       kdiff="0.0"     kdiffunit="mu2/s"/>
<Specie name="SCappSSH"        id="SCappSSH"       kdiff="0.0"     kdiffunit="mu2/s"/>
<Specie name="pSSH"        id="pSSH"       kdiff="0.01"     kdiffunit="mu2/s"/>
<Specie name="SSH" id="SSH" kdiff="0.01" kdiffunit="mu2/s"/>
<Specie name="RacPAKSSH" id="RacPAKSSH" kdiff="0.01" kdiffunit="mu2/s"/>
<Specie name="CaNCamCa4pSSH"        id="CaNCamCa4pSSH"       kdiff="0.01"     kdiffunit="mu2/s"/>

<!-- LIMK pathway -->
<Specie name="LIMK" id="LIMK" kdiff="0.01" kdiffunit="mu2/s"/>
<Specie name="pLIMK" id="pLIMK" kdiff="0.01" kdiffunit="mu2/s" />
<Specie name="SSHpLIMK" id="SSHpLIMK" kdiff="0.01"  kdiffunit="mu2/s"/>
<Specie name="PKAcLIMK"  id="PKAcLIMK"  kdiff="0.01"  kdiffunit="mu2/s"/>
<Specie name="RacPAKLIMK" id="RacPAKLIMK" kdiff="0.01" kdiffunit="mu2/s"  />

<!-- Cof pathway -->
<Specie name="Cof" id="Cof" kdiff="0.01" kdiffunit="mu2/s"  />
<Specie name="pCof" id="pCof"  kdiff="0.01" kdiffunit="mu2/s"/>
<Specie name="pLIMKCof" id="pLIMKCof"  kdiff="0.01" kdiffunit="mu2/s"/>
<Specie name="SSHpCof" id="SSHpCof" kdiff="0.01" kdiffunit="mu2/s"/>

<!-- actin binding to Cof -->    
<Specie name="actin"      id="actin"    kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="Cofactin"     id="Cofactin"    kdiff="0"    kdiffunit="mu2/s"/>

<!-- calcium stuff first -->
    <Specie name="Ca"                id="Ca"                kdiff="174.3" kdiffunit="mu2/s"/>
    <Specie name="Caext"             id="Caext"             kdiff="17.43" kdiffunit="mu2/s"/>
    <Specie name="CaextLeak"         id="CaextLeak"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Leak"              id="Leak"              kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pmca"              id="pmca"              kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ncx"               id="ncx"               kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pmcaCa"            id="pmcaCa"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="Calbin"            id="Calbin"            kdiff="9.3"   kdiffunit="mu2/s"/>
    <Specie name="CalbinC" id="CalbinC" kdiff="9.3" kdiffunit="mu2/s"/>
    <Specie name="Cam" id="Cam" kdiff="11" kdiffunit="mu2/s"/>
    <Specie name="Cam1N" id="Cam1N" kdiff="11" kdiffunit="mu2/s"/>
    <Specie name="CamCa2N" id="CamCa2N" kdiff="11" kdiffunit="mu2/s"/>
    <Specie name="Cam1C" id="Cam1C" kdiff="11" kdiffunit="mu2/s"/>
    <Specie name="Cam1C1N" id="Cam1C1N" kdiff="11" kdiffunit="mu2/s"/>
    <Specie name="Cam1C2N" id="Cam1C2N" kdiff="11" kdiffunit="mu2/s"/>
    <Specie name="CamCa2C" id="CamCa2C" kdiff="11" kdiffunit="mu2/s"/>
    <Specie name="CamCa2C1N" id="CamCa2C1N" kdiff="11" kdiffunit="mu2/s"/>
    <Specie name="CamCa4" id="CamCa4" kdiff="11" kdiffunit="mu2/s"/>
<!-- Cam from Gq files, with either C or N site binding first to CK and CaN -->
    
    <Specie name="CK" id="CK" kdiff="4" kdiffunit="mu2/s"/>
    <Specie name="CKp" id="CKp" kdiff="4" kdiffunit="mu2/s"/>
    <Specie name="CKCam" id="CKCam" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCam1N" id="CKCam1N" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamCa2N" id="CKCamCa2N" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCam1C" id="CKCam1C" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCam1C1N" id="CKCam1C1N" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCam1C2N" id="CKCam1C2N" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamCa2C" id="CKCamCa2C" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamCa2C1N" id="CKCamCa2C1N" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamCa4" id="CKCamCa4" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_0_0_1" id="CKCamcomplex_0_0_0_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_0_0_2" id="CKCamcomplex_0_0_0_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_0_1_0" id="CKCamcomplex_0_0_1_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_0_1_1" id="CKCamcomplex_0_0_1_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_0_1_2" id="CKCamcomplex_0_0_1_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_0_2_0" id="CKCamcomplex_0_0_2_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_0_2_1" id="CKCamcomplex_0_0_2_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_0_2_2" id="CKCamcomplex_0_0_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_1_0_2" id="CKCamcomplex_0_1_0_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_1_1_0" id="CKCamcomplex_0_1_1_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_1_1_1" id="CKCamcomplex_0_1_1_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_1_1_2" id="CKCamcomplex_0_1_1_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_1_2_0" id="CKCamcomplex_0_1_2_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_1_2_1" id="CKCamcomplex_0_1_2_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_1_2_2" id="CKCamcomplex_0_1_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_2_1_0" id="CKCamcomplex_0_2_1_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_2_1_1" id="CKCamcomplex_0_2_1_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_2_1_2" id="CKCamcomplex_0_2_1_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_2_2_0" id="CKCamcomplex_0_2_2_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_2_2_1" id="CKCamcomplex_0_2_2_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_2_2_2" id="CKCamcomplex_0_2_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_1_0_1_1" id="CKCamcomplex_1_0_1_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_1_0_1_2" id="CKCamcomplex_1_0_1_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_1_0_2_0" id="CKCamcomplex_1_0_2_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_1_0_2_1" id="CKCamcomplex_1_0_2_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_1_0_2_2" id="CKCamcomplex_1_0_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_1_1_1_2" id="CKCamcomplex_1_1_1_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_1_1_2_0" id="CKCamcomplex_1_1_2_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_1_1_2_1" id="CKCamcomplex_1_1_2_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_1_1_2_2" id="CKCamcomplex_1_1_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_1_2_2_0" id="CKCamcomplex_1_2_2_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_1_2_2_1" id="CKCamcomplex_1_2_2_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_1_2_2_2" id="CKCamcomplex_1_2_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_2_0_2_1" id="CKCamcomplex_2_0_2_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_2_0_2_2" id="CKCamcomplex_2_0_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_2_1_2_2" id="CKCamcomplex_2_1_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_0_0_0" id="CKCamcomplex_0_0_0_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_1_0_1" id="CKCamcomplex_0_1_0_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_0_2_0_2" id="CKCamcomplex_0_2_0_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_1_0_1_0" id="CKCamcomplex_1_0_1_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_1_1_1_1" id="CKCamcomplex_1_1_1_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_1_2_1_2" id="CKCamcomplex_1_2_1_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_2_0_2_0" id="CKCamcomplex_2_0_2_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_2_1_2_1" id="CKCamcomplex_2_1_2_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCamcomplex_2_2_2_2" id="CKCamcomplex_2_2_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCam" id="CKpCam" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCam1N" id="CKpCam1N" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamCa2N" id="CKpCamCa2N" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCam1C" id="CKpCam1C" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCam1C1N" id="CKpCam1C1N" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCam1C2N" id="CKpCam1C2N" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamCa2C" id="CKpCamCa2C" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamCa2C1N" id="CKpCamCa2C1N" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamCa4" id="CKpCamCa4" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_0_0_0" id="CKpCamcomplex_0_0_0_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_0_0_1" id="CKpCamcomplex_0_0_0_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_0_0_2" id="CKpCamcomplex_0_0_0_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_0_1_0" id="CKpCamcomplex_0_0_1_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_0_1_1" id="CKpCamcomplex_0_0_1_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_0_1_2" id="CKpCamcomplex_0_0_1_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_0_2_0" id="CKpCamcomplex_0_0_2_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_0_2_1" id="CKpCamcomplex_0_0_2_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_0_2_2" id="CKpCamcomplex_0_0_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_1_0_0" id="CKpCamcomplex_0_1_0_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_1_0_1" id="CKpCamcomplex_0_1_0_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_1_0_2" id="CKpCamcomplex_0_1_0_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_1_1_0" id="CKpCamcomplex_0_1_1_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_1_1_1" id="CKpCamcomplex_0_1_1_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_1_1_2" id="CKpCamcomplex_0_1_1_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_1_2_0" id="CKpCamcomplex_0_1_2_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_1_2_1" id="CKpCamcomplex_0_1_2_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_1_2_2" id="CKpCamcomplex_0_1_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_2_0_0" id="CKpCamcomplex_0_2_0_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_2_0_1" id="CKpCamcomplex_0_2_0_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_2_0_2" id="CKpCamcomplex_0_2_0_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_2_1_0" id="CKpCamcomplex_0_2_1_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_2_1_1" id="CKpCamcomplex_0_2_1_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_2_1_2" id="CKpCamcomplex_0_2_1_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_2_2_0" id="CKpCamcomplex_0_2_2_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_2_2_1" id="CKpCamcomplex_0_2_2_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_0_2_2_2" id="CKpCamcomplex_0_2_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_0_0_0" id="CKpCamcomplex_1_0_0_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_0_0_1" id="CKpCamcomplex_1_0_0_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_0_0_2" id="CKpCamcomplex_1_0_0_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_0_1_0" id="CKpCamcomplex_1_0_1_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_0_1_1" id="CKpCamcomplex_1_0_1_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_0_1_2" id="CKpCamcomplex_1_0_1_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_0_2_0" id="CKpCamcomplex_1_0_2_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_0_2_1" id="CKpCamcomplex_1_0_2_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_0_2_2" id="CKpCamcomplex_1_0_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_1_0_0" id="CKpCamcomplex_1_1_0_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_1_0_1" id="CKpCamcomplex_1_1_0_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_1_0_2" id="CKpCamcomplex_1_1_0_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_1_1_0" id="CKpCamcomplex_1_1_1_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_1_1_1" id="CKpCamcomplex_1_1_1_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_1_1_2" id="CKpCamcomplex_1_1_1_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_1_2_0" id="CKpCamcomplex_1_1_2_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_1_2_1" id="CKpCamcomplex_1_1_2_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_1_2_2" id="CKpCamcomplex_1_1_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_2_0_0" id="CKpCamcomplex_1_2_0_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_2_0_1" id="CKpCamcomplex_1_2_0_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_2_0_2" id="CKpCamcomplex_1_2_0_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_2_1_0" id="CKpCamcomplex_1_2_1_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_2_1_1" id="CKpCamcomplex_1_2_1_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_2_1_2" id="CKpCamcomplex_1_2_1_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_2_2_0" id="CKpCamcomplex_1_2_2_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_2_2_1" id="CKpCamcomplex_1_2_2_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_1_2_2_2" id="CKpCamcomplex_1_2_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_0_0_0" id="CKpCamcomplex_2_0_0_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_0_0_1" id="CKpCamcomplex_2_0_0_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_0_0_2" id="CKpCamcomplex_2_0_0_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_0_1_0" id="CKpCamcomplex_2_0_1_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_0_1_1" id="CKpCamcomplex_2_0_1_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_0_1_2" id="CKpCamcomplex_2_0_1_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_0_2_0" id="CKpCamcomplex_2_0_2_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_0_2_1" id="CKpCamcomplex_2_0_2_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_0_2_2" id="CKpCamcomplex_2_0_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_1_0_0" id="CKpCamcomplex_2_1_0_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_1_0_1" id="CKpCamcomplex_2_1_0_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_1_0_2" id="CKpCamcomplex_2_1_0_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_1_1_0" id="CKpCamcomplex_2_1_1_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_1_1_1" id="CKpCamcomplex_2_1_1_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_1_1_2" id="CKpCamcomplex_2_1_1_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_1_2_0" id="CKpCamcomplex_2_1_2_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_1_2_1" id="CKpCamcomplex_2_1_2_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_1_2_2" id="CKpCamcomplex_2_1_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_2_0_0" id="CKpCamcomplex_2_2_0_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_2_0_1" id="CKpCamcomplex_2_2_0_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_2_0_2" id="CKpCamcomplex_2_2_0_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_2_1_0" id="CKpCamcomplex_2_2_1_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_2_1_1" id="CKpCamcomplex_2_2_1_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_2_1_2" id="CKpCamcomplex_2_2_1_2" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_2_2_0" id="CKpCamcomplex_2_2_2_0" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_2_2_1" id="CKpCamcomplex_2_2_2_1" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCamcomplex_2_2_2_2" id="CKpCamcomplex_2_2_2_2" kdiff="0.017" kdiffunit="mu2/s"/>
    
    <Specie name="PP1"                                 id="PP1"               kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="CKpPP1" id="CKpPP1" kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="CKpCamCa4PP1" id="CKpCamCa4PP1" kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="CKpCamCa2NPP1" id="CKpCamCa2NPP1" kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="CKpCamCa2CPP1" id="CKpCamCa2CPP1" kdiff="0" kdiffunit="mu2/s"/>
    
    <Specie name="CKpCam1NPP1" id="CKpCam1NPP1" kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="CKpCam1CPP1" id="CKpCam1CCPP1" kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="CKpCam1C1NPP1" id="CKpCam1C1NPP1" kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="CKpCam1C2NPP1" id="CKpCam1C2NPP1" kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="CKpCamCa2C1NPP1" id="CKpCamCa2C1NPP1" kdiff="0" kdiffunit="mu2/s"/>
    
    <Specie name="CKpCamPP1" id="CKpCamPP1" kdiff="0" kdiffunit="mu2/s"/>
    
    <Specie name="I1"                                  id="I1"                kdiff="9.49" kdiffunit="mu2/s"/>
    <Specie name="I1PKAc"                               id="I1PKAc"           kdiff="10.6" kdiffunit="mu2/s"/>
    <Specie name="Ip35"                                 id="Ip35"               kdiff="7.02"    kdiffunit="mu2/s"/>
    <Specie name="Ip35PP1"                              id="Ip35PP1"            kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="Ip35CaNCamCa4"                       id="Ip35CaNCamCa4"     kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="Ip35PP1CaNCamCa4"                    id="Ip35PP1CaNCamCa4"   kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="Ng"                                   id="Ng"                   kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="NgCam"                                id="NgCam"                kdiff="0"     kdiffunit="mu2/s"/>
	

    <Specie name="CaN" id="CaN" kdiff="0.61" kdiffunit="mu2/s"/>
    <Specie name="CaNCam" id="CaNCam" kdiff="0.61" kdiffunit="mu2/s"/>
    <Specie name="CaNCam1C" id="CaNCam1C" kdiff="0.61" kdiffunit="mu2/s"/>
    <Specie name="CaNCam1N" id="CaNCam1N" kdiff="0.61" kdiffunit="mu2/s"/>
    <Specie name="CaNCamCa2C" id="CaNCamCa2C" kdiff="0.61" kdiffunit="mu2/s"/>
    <Specie name="CaNCamCa2N" id="CaNCamCa2N" kdiff="0.61" kdiffunit="mu2/s"/>
    <Specie name="CaNCam1C1N" id="CaNCam1C1N" kdiff="0.61" kdiffunit="mu2/s"/>
    <Specie name="CaNCam1C2N" id="CaNCam1C2N" kdiff="0.61" kdiffunit="mu2/s"/>
    <Specie name="CaNCamCa2C1N" id="CaNCamCa2C1N" kdiff="0.61" kdiffunit="mu2/s"/>
    <Specie name="CaNCamCa4" id="CaNCamCa4" kdiff="0.61" kdiffunit="mu2/s"/>
<!-- Ligan -->
    <Specie name="L" id="L" kdiff="111.4" kdiffunit="mu2/s"/>
    <Specie name="LOut" id="LOut" kdiff="10" kdiffunit="mu2/s"/>
  <!--Added from Andy's model-->
  <Specie name="R" id="R" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Gs" id="Gs" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Gi" id="Gi" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="LR" id="LR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="LRGs" id="LRGs" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PKAcLR" id="PKAcLR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PKAcpLR" id="PKAcpLR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PKAcppLR" id="PKAcppLR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pLR" id="pLR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ppLR" id="ppLR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ppLRGi" id="ppLRGi" kdiff="0" kdiffunit="mu2/s"/>
  
    
  <Specie name="GsR" id="GsR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GasGTP" id="GasGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GasGDP" id="GasGDP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GaiGTP" id="GaiGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GaiGDP" id="GaiGDP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Gibg" id="Gibg" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Gsbg" id="Gsbg" kdiff="0" kdiffunit="mu2/s"/>
  
  <Specie name="cAMP"     id="cAMP"     kdiff="86.4"     kdiffunit="mu2/s"/>
  <Specie name="AMP"       id="AMP"      kdiff="0.848" kdiffunit="mu2/s"/><!-- diffusion rate not important-->
  <Specie name="AC1"         id="AC1"      kdiff="0"      kdiffunit="mu2/s"/>
  <Specie name="AC1GasGTP"   id="AC1GasGTP"  kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1GasGTPCamCa4"   id="AC1GasGTPCamCa4"   kdiff="0"         kdiffunit="mu2/s"/>
  <Specie name="AC1GasGTPCamCa4ATP" id="AC1GasGTPCamCa4ATP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1GaiGTP" id="AC1GaiGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1GaiGTPCamCa4" id="AC1GaiGTPCamCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1GaiGTPCamCa4ATP" id="AC1GaiGTPCamCa4ATP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1GasGTPGaiGTP" id="AC1GasGTPGaiGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1GasGTPGaiGTPCamCa4" id="AC1GasGTPGaiGTPCamCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1GsGiCamCa4ATP" id="AC1GsGiCamCa4ATP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1CamCa4" id="AC1CamCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1CamCa4ATP" id="AC1CamCa4ATP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC8" id="AC8" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC8CamCa4" id="AC8CamCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC8CamCa4ATP" id="AC8CamCa4ATP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PDE1" id="PDE1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PDE1CamCa4" id="PDE1CamCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PDE1CamCa4cAMP" id="PDE1CamCa4cAMP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PDE4" id="PDE4" kdiff="6.1" kdiffunit="mu2/s"/>
  <Specie name="PDE4cAMP" id="PDE4cAMP" kdiff="6.0" kdiffunit="mu2/s"/>
  <Specie name="PKAcPDE4" id="PKAcPDE4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pPDE4" id="pPDE4" kdiff="6.1" kdiffunit="mu2/s"/>
  <Specie name="pPDE4cAMP" id="pPDE4cAMP" kdiff="6.0" kdiffunit="mu2/s"/>
  <Specie name="PKAc_PDE4_cAMP" id="PKAc_PDE4_cAMP" kdiff="0" kdiffunit="mu2/s"/> 
  

  <Specie name="PKAcAMP2"                            id="PKAcAMP2"                kdiff="0"    kdiffunit="mu2/s"/>
  <Specie name="PKAcAMP4"                            id="PKAcAMP4"                kdiff="0"    kdiffunit="mu2/s"/>
  <Specie name="PKA"                                 id="PKA"                kdiff="0"    kdiffunit="mu2/s"/>
  <Specie name="PKAc"                                id="PKAc"                kdiff="0.836"    kdiffunit="mu2/s"/>
  <Specie name="PKAr"                                id="PKAr"                kdiff="0"    kdiffunit="mu2/s"/>
  
<!-- Epac -->
  <Specie name="Epac"               id="Epac"               kdiff="5.62"             kdiffunit="mu2/s"/>
  <Specie name="EpacAMP"            id="EpacAMP"           kdiff="5.61"             kdiffunit="mu2/s"/>


  <!--fixed buffer -->
  <Specie name="CB"            id="CB"            kdiff="0"   kdiffunit="mu2/s"/>
  <Specie name="CaB"      id="CaB" kdiff="0" kdiffunit="mu2/s"/>

 
<!--****************************************************************************
Now, the reactions themselves
****************************************************************************-->
<!--activation of Kal-->
<!--CamKII to Kal restore original rates-->
<!--CamKII+Kal<->CamKII +pKal-->
<!--part 1-->
<Reaction id="Kal+CKCamCa4--KalCKCamCa4" name="Kal+CKCamCa4--KalCKCamCa4">
<Reactant specieID="Kal"/>
<Reactant specieID="CKCamCa4"/>
<Product specieID="KalCKCamCa4"/>

<forwardRate>0.000015e-3</forwardRate>
<reverseRate> 0.12e-3</reverseRate>
<!--forwardRate> 0.000010e-3 </forwardRate>
<reverseRate> 0.08e-3 </reverseRate-->


</Reaction>
<Reaction id="KalCKCamCa4--pKal+CKCamCa4" name="KalCKCamCa4--pKal+CKCamCa4">
<Reactant specieID="KalCKCamCa4"/>
<Product specieID="CKCamCa4"/>
<Product specieID="pKal"/>

<forwardRate> 0.03e-3 </forwardRate>
<!--forwardRate> 0.02e-3 </forwardRate-->
<reverseRate> 0 </reverseRate>

</Reaction>

<!--part 2-->
<!--CamKII+Kal<->CamKII +pKal restore original rates-->
<Reaction id="Kal+CKpCamCa4--KalCKpCamCa4" name="Kal+CKpCamCa4--KalCKpCamCa4">
<Reactant specieID="Kal"/>
<Reactant specieID="CKpCamCa4"/>
<Product specieID="KalCKpCamCa4"/>

<forwardRate>0.00015e-3</forwardRate>
<reverseRate> 1.2e-3</reverseRate>
<!--forwardRate>0.00010e-3</forwardRate>
<reverseRate>0.8e-3</reverseRate-->


</Reaction>
<Reaction id="KalCKpCamCa4--pKal+CKpCamCa4" name="KalCKpCamCa4--pKal+CKpCamCa4">
<Reactant specieID="KalCKpCamCa4"/>
<Product specieID="CKpCamCa4"/>
<Product specieID="pKal"/>

<forwardRate>0.3e-3 </forwardRate>
<!--forwardRate>0.2e-3 </forwardRate-->
<reverseRate> 0 </reverseRate>

</Reaction>


<!--PKA to Kal Restore original rates
2025 dec 18: double (back to 2023 rates) to add role for PKA -->
<!--PKAc+Kal<->PKAc +pKal-->
<Reaction id="Kal+PKAc--KalPKAc" name="Kal+PKAc--KalPKAc">
<Reactant specieID="Kal"/>
<Reactant specieID="PKAc"/>
<Product specieID="KalPKAc"/>

<forwardRate>0.0003e-3</forwardRate>
<reverseRate> 2.4e-3</reverseRate>
<!--forwardRate>0.00010e-3</forwardRate>
<reverseRate> 0.8e-3</reverseRate-->


</Reaction>
<Reaction id="KalPKAc--pKal+PKAc" name="KalPKAc--pKal+PKAc">
<Reactant specieID="KalPKAc"/>
<Product specieID="PKAc"/>
<Product specieID="pKal"/>

<forwardRate>0.6e-3 </forwardRate>
<!--forwardRate>0.2e-3 </forwardRate-->
<reverseRate> 0 </reverseRate>

</Reaction>


<!--PP1 inactivates Kal 3x faster to maintain balance with phos Kal
2025 dec 18: 20% additional increase, to maintain basal -->
<!--PP1+Kal<->PP1 +pKal-->
<Reaction id="pKal+PP1--pKalPP1" name="pKal+PP1--pKalPP1">
<Reactant specieID="pKal"/>
<Reactant specieID="PP1"/>
<Product specieID="pKalPP1"/>

<forwardRate> 0.00006e-3 </forwardRate>
<!--forwardRate> 0.0000333e-3 </forwardRate-->
<reverseRate> 0.144e-3 </reverseRate>
<!--reverseRate> 0.0267e-3 </reverseRate-->

</Reaction>
<Reaction id="pKalPP1--Kal+PP1" name="pKalPP1--Kal+PP1">
<Reactant specieID="pKalPP1"/>
<Product specieID="PP1"/>
<Product specieID="Kal"/>

<forwardRate> 0.036e-3 </forwardRate>
<!--forwardRate> 0.0033e-3 </forwardRate-->
<reverseRate> 0 </reverseRate>

</Reaction>



<!--RacGDP bind to 1433-->
<!--RacGDP+ RCap<->RCapGDP-->
<Reaction id="RacGDP+RCap--RCapGDP" name="RacGDP+RCap--RCapGDP">
<Reactant specieID="RCap"/>
<Reactant specieID="RacGDP"/>
<Product specieID="RCapGDP"/>

<forwardRate>0.1e-3</forwardRate>
<reverseRate>0</reverseRate>

</Reaction>

<!--RacGTP activation CHANGED-->
<!--RacGDP+ pKal<->RacGTP + pKal-->
<Reaction id="RacGDP+Kal--pKalRacGDP" name="RacGDP+pKal--pKalRacGDP">
<Reactant specieID="pKal"/>
<Reactant specieID="RCapGDP"/>
<Product specieID="pKalRac"/>

<forwardRate>0.000375e-3</forwardRate>
<reverseRate>0.3e-3</reverseRate>

</Reaction>

<Reaction id="pKalRacGDP--pKal+RacGTP" name="pKalRacGDP--pKal+RacGTP">
<Reactant specieID="pKalRac"/>
<Product specieID="RacGTP"/>
<Product specieID="RCap"/>
<Product specieID="pKal"/>

<forwardRate>1.5e-3</forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>


<!--RacGTP inactivation -->
<!--RacGTP+ Gap<->RacGDP + Gap-->
<Reaction id="RacGTP+Gap--GapRacGTP" name="RacGTP+Gap--GapRacGTP">
<Reactant specieID="Gap"/>
<Reactant specieID="RacGTP"/>
<Product specieID="RacGap"/>

<forwardRate> 2.2e-6 </forwardRate>
<reverseRate> 4.82e-3</reverseRate>

</Reaction>

<Reaction id="GapRacGTP--RacGDP+Gap" name="GapRacGTP--RacGDP+Gap">
<Reactant specieID="RacGap"/>
<Product specieID="RacGDP"/>
<Product specieID="Gap"/>

<forwardRate> 1.21e-3 </forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>

<!--RacGTP activate PAK, make faster to better follow RacGTP, but same affinity - same basal?-->
<!--RacGTP+PAK <->RacPAK-->
<Reaction id="RacGTP+PAK--RacGTPPAK" name="RacGTP+PAK--RacGTPPAK">
<Reactant specieID="PAK"/>
<Reactant specieID="RacGTP"/>
<Product specieID="RacPAK"/>

<forwardRate>0.09432854292459061e-6</forwardRate>
<reverseRate>0.01639e-3</reverseRate>

</Reaction>

<!-- intrinsic inactivation of PAK CHANGED-->
<!--RacPAK<->RacGDP+PAK-->
<Reaction id="RacPAK--RacGDP+PAK" name="RacPAK--RacGDP+PAK">
<Reactant specieID="RacPAK"/>
<Product specieID="RacGDP"/>
<Product specieID="PAK"/>

<forwardRate>4.6764115604291607e-8</forwardRate>
<reverseRate>0</reverseRate>

</Reaction>

<!--pSSH bind to 1433-->
<!--pSSH+ SCap<->SCapGDP-->
<Reaction id="pSSH+SCap--SCappSSH" name="pSSH+SCap--SCappSSH">
<Reactant specieID="SCap"/>
<Reactant specieID="pSSH"/>
<Product specieID="SCappSSH"/>

<forwardRate>0.01e-3</forwardRate>
<reverseRate>0</reverseRate>

</Reaction>

<!-- CaN activate SSH-->
<!--  CaNCam+pSSH <->CaNCam+SSH-->
<Reaction name="CaNCamCa4+pSSH--CaNCamCa4pSSH" id="CaNCamCa4+pSSH--CaNCamCa4pSSH">
        <Reactant specieID="SCappSSH"/>
        <Reactant specieID="CaNCamCa4"/>
        <Product specieID="CaNCamCa4pSSH"/>

        <!--forwardRate>0.336e-06</forwardRate-->
        <!--reverseRate>1.344e-3</reverseRate-->
	<!--forwardRate>0.48e-06</forwardRate>
        <reverseRate>1.92e-3</reverseRate-->
	<forwardRate>0.96e-06</forwardRate>
        <reverseRate>2.56e-3</reverseRate>

</Reaction>

<!--  CaNCam+pSSH <->CaNCam+SSH -->
<Reaction name="CaNCamCa4pSSH--SSH+CaNCamCa4" id="CaNCamCa4pSSH--SSH+CaNCamCa4">
        <Reactant specieID="CaNCamCa4pSSH"/>
        <Product specieID="CaNCamCa4"/>
        <Product specieID="SSH"/>
	<Product specieID="SCap"/>
	
       	<!--forwardRate>0.336e-3</forwardRate-->
	<forwardRate>0.64e-3</forwardRate>
        <reverseRate> 0 </reverseRate>
</Reaction>

<!--PAK inactivate SSH through phosphorylation-->
<Reaction id="RacPAK+SSH--SSHRacPAK" name="RacPAK+SSH--SSHRacPAK">
<Reactant specieID="RacPAK"/>
<Reactant specieID="SSH"/>
<Product specieID="RacPAKSSH"/>

<!-- decrease RacPAK SSH to reduce pSSH, but that could increase RacPAK LIMK -->
<!--forwardRate>0.1e-6</forwardRate>
<reverseRate>0.33e-3</reverseRate-->
<forwardRate>0.1e-6</forwardRate>
<reverseRate>0.33e-3</reverseRate>
</Reaction>

<Reaction id="SSHRacPAK--pSSH+RacPAK" name="SSHRacPAK--pSSH+RacPAK">
<Reactant specieID="RacPAKSSH"/>
<Product specieID="pSSH"/>
<Product specieID="RacPAK"/>

<!-- decrease RacPAK SSH catalytic rate to reduce pSSH, without increasing RacPAK LIMK ?-->
<!-- Will 20% increase in SSH rates mean that RacPAK has less access (and enhances pLIMK?) -->
<forwardRate>0.083e-3</forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>

<!--LIMK activated by PAK-->
<!--PAK+LIMK <->pLIMK+PAK-->
<Reaction id="RacPAK+LIMK--LIMKRacPAK" name="RacPAK+LIMK--LIMKRacPAK">
<Reactant specieID="RacPAK"/>
<Reactant specieID="LIMK"/>
<Product specieID="RacPAKLIMK"/>

<!--forwardRate>0.2e-6</forwardRate>
<reverseRate>0.68e-3</reverseRate-->
<!--increase rate to compensate for less SSH dephos?-->
<forwardRate>0.4e-6</forwardRate>
<reverseRate>1.36e-3</reverseRate>

</Reaction>

<Reaction id="LIMKRacPAK--RacPAK+pLIMK" name="LIMKRacPAK--RacPAK+pLIMK">
<Reactant specieID="RacPAKLIMK"/>
<Product specieID="pLIMK"/>
<Product specieID="RacPAK"/>

<forwardRate>0.336e-3</forwardRate>
<!--forwardRate>0.168e-3</forwardRate-->
<reverseRate> 0 </reverseRate>

</Reaction>


<!--LIMK activated by PKAc restore original rates
2025 dec 18: 50% increase (back to 2023 rates) to add role for PKA -->
<!--PKAc+LIMK <->pLIMK+PKAc-->
<Reaction id="PKAc+LIMK--LIMKPKAc" name="PKAc+LIMK--LIMKPKAc">
<Reactant specieID="PKAc"/>
<Reactant specieID="LIMK"/>
<Product specieID="PKAcLIMK"/>

<!--forwardRate>0.133e-6</forwardRate--><!-- restore original rates-->
<!--reverseRate>0.455e-3</reverseRate-->
<forwardRate>0.6e-6</forwardRate>
<reverseRate>2e-3</reverseRate>

</Reaction>

<Reaction id="LIMKPKAc--PKAc+pLIMK" name="LIMKPKAc--PKAc+pLIMK">
<Reactant specieID="PKAcLIMK"/>
<Product specieID="pLIMK"/>
<Product specieID="PKAc"/>

<forwardRate>0.5e-3</forwardRate>
<!--forwardRate>0.112e-3</forwardRate-->
<reverseRate> 0 </reverseRate>

</Reaction>
<!-- increase these two SSH rates by 40% and then 3x more to reduce pLIMK and pCof
2025 dec 18: 20% increase to maintain basal -->
<!--SSH inactivation LIMK-->
<!--pLIMK+SSH <->SSH+LIMK-->
<Reaction id="pLIMK+SSH--SSHpLIMK" name="pLIMK+SSH--SSHpLIMK">
<Reactant specieID="pLIMK"/>
<Reactant specieID="SSH"/>
<Product specieID="SSHpLIMK"/>

<forwardRate>0.5695e-6</forwardRate> <!-- increased rates to reduce pCof --> 
<reverseRate>2.118e-3</reverseRate>

</Reaction>


<Reaction id="SSHpLIMK--pLIMK+SSH" name="SSHpLIMK--pLIMK+SSH">
<Reactant specieID="SSHpLIMK"/>
<Product specieID="SSH"/>
<Product specieID="LIMK"/>

<forwardRate>0.5292e-3</forwardRate>
<reverseRate> 0 </reverseRate>
</Reaction>


<!--LIMK inactivation Cof-->
<!--Cof+pLIMK <->pLIMK+pCof-->
<Reaction id="Cof+pLIMK--pLIMKCof" name="Cof+pLIMK--pLIMKCof">
<Reactant specieID="Cof"/>
<Reactant specieID="pLIMK"/>
<Product specieID="pLIMKCof"/>

<forwardRate>3.61e-6</forwardRate>
<reverseRate>0.014</reverseRate>


</Reaction>

<Reaction id="pLIMKCof--pCof+pLIMK" name="pLIMKCof--pCof+pLIMK">
<Reactant specieID="pLIMKCof"/>
<Product specieID="pLIMK"/>
<Product specieID="pCof"/>

<forwardRate>0.0035</forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>


<!--SSH activation Cof - increased 40%, then 3x-->
<!--Cof+SSH <->SSH+pCof-->
<Reaction id="pCof+SSH--SSHpCof" name="pCof+SSH--SSHpCof">
<Reactant specieID="pCof"/>
<Reactant specieID="SSH"/>
<Product specieID="SSHpCof"/>


<forwardRate>0.0182e-3</forwardRate>
<reverseRate>0.0706</reverseRate>

</Reaction>

<Reaction id="SSHpCof--Cof+SSH" name="pCof+SSH--Cof+SSH">
<Reactant specieID="SSHpCof"/>
<Product specieID="SSH"/>
<Product specieID="Cof"/>


<forwardRate>0.0192</forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>

<!--Actin binding to Cof -->
<Reaction id="actin+Cof--Cofactin" name="actin+Cof--Cofactin">
<Reactant specieID="actin"/>
<Reactant specieID="Cof"/>
<Product specieID="Cofactin"/>

<forwardRate>0.11957665076073118e-9</forwardRate>
<reverseRate>0.009362762571712258e-3</reverseRate>
</Reaction>


<!-- Calcium binding -->

<!-- i: Ca pump high affinity -    Ca + pmca <-> pmcaCa  SAME-->
    <Reaction name = "Ca_pump1a" id="Ca_pump1a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="pmca"/>
	<Product specieID="pmcaCa"/>

	<forwardRate>0.5e-4</forwardRate>
	<reverseRate>0.007</reverseRate>
	
    </Reaction>

<!-- ii: Ca pump high affinity -    pmcaCa <-> pmca + CaOut   SAME-->
    <Reaction name = "Ca_pump1b" id="Ca_pump1b">
	<Reactant specieID="pmcaCa"/>
	<Product specieID="pmca"/>
	<Product specieID="Caext"/>

	<forwardRate>0.0035</forwardRate>
	<reverseRate>0</reverseRate>

    </Reaction>

<!-- iii: Ca pump low affinity -   7 Ca + ncx <-> ncxCa  SAME-->
    <Reaction name = "Ca_pump2a" id="Ca_pump2a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="ncx"/>
	<Product specieID="ncxCa"/>

	<forwardRate>1.68e-5</forwardRate>
	<reverseRate>0.0112</reverseRate>

    </Reaction>

<!-- iv: Ca pump low affinity -    ncxCa <-> ncx + CaOut   SAME-->
    <Reaction name = "Ca_pump2b" id="Ca_pump2b">
	<Reactant specieID="ncxCa"/>
	<Product specieID="ncx"/>
	<Product specieID="Caext"/>

	<forwardRate>0.0056</forwardRate>
	<reverseRate>0</reverseRate>
	
    </Reaction>
    
<!-- v: Ca leak -    CaOut + Leak <-> CaOutLeak  GQ RXN FILE, Leak is sm only-->
    <Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="Caext"/>
	<Reactant specieID="Leak"/>
	<Product specieID="CaextLeak"/>

        <forwardRate>1.5e-6</forwardRate>
	<reverseRate>1.1e-3</reverseRate>

    </Reaction>

<!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
    <Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="CaextLeak"/>
	<Product specieID="Ca"/>
	<Product specieID="Leak"/>

        <forwardRate>1.1e-3</forwardRate>
	<reverseRate>0</reverseRate>

    </Reaction>
<!-- vii: Ca Buffer    Ca + Calbindin <-> calbinC  SAME-->
    <Reaction name = "Ca_buffer" id="Ca_Buffer">
        <Reactant specieID="Ca"/>
        <Reactant specieID="Calbin"/>
        <Product specieID="CalbinC"/>

        <forwardRate>2.8e-5</forwardRate>
        <reverseRate>0.0196</reverseRate>
       
</Reaction>

<!-- viii: Ca fixBuffer    Ca + CB <-> CaB  SAME-->
    <Reaction name = "Ca_buffer" id="Ca_Buffer">
        <Reactant specieID="Ca"/>
        <Reactant specieID="CB"/>
        <Product specieID="CaB"/>
	
        <forwardRate>0.00002e-3</forwardRate>
        <reverseRate>0.001</reverseRate>
	
</Reaction>

<!-- Calcium binding -->

 <Reaction name="reaction1" id="reaction1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cam"/>
    <Product specieID="Cam1C"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction3" id="reaction3">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cam1N"/>
    <Product specieID="Cam1C1N"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction5" id="reaction5">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CamCa2N"/>
    <Product specieID="Cam1C2N"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction7" id="reaction7">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cam1C"/>
    <Product specieID="CamCa2C"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction9" id="reaction9">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cam1C1N"/>
    <Product specieID="CamCa2C1N"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction11" id="reaction11">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cam1C2N"/>
    <Product specieID="CamCa4"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction13" id="reaction13">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cam"/>
    <Product specieID="Cam1N"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction15" id="reaction15">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cam1N"/>
    <Product specieID="CamCa2N"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="reaction17" id="reaction17">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cam1C"/>
    <Product specieID="Cam1C1N"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction19" id="reaction19">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cam1C1N"/>
    <Product specieID="Cam1C2N"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="reaction21" id="reaction21">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CamCa2C"/>
    <Product specieID="CamCa2C1N"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction23" id="reaction23">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CamCa2C1N"/>
    <Product specieID="CamCa4"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="NgCam_bind" id="NgCam_bind">
    <Reactant specieID="Cam"/>
    <Reactant specieID="Ng"/>
    <Product specieID="NgCam"/>
    <forwardRate>28.e-6</forwardRate>
    <reverseRate>36.e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

 

<!--XII. *************** CamKII ************* -->
<Reaction name="reaction25" id="reaction25">
<Reactant specieID="Ca"/>
<Reactant specieID="CKCam"/>
<Product specieID="CKCam1C"/>
<forwardRate>0.00221472878129035</forwardRate>
<reverseRate>0.033</reverseRate>
</Reaction>
<Reaction name="reaction27" id="reaction27">
<Reactant specieID="Ca"/>
<Reactant specieID="CKCam1N"/>
<Product specieID="CKCam1C1N"/>
<forwardRate>0.0242331251847473</forwardRate>
<reverseRate>0.033</reverseRate>
</Reaction>
<Reaction name="reaction29" id="reaction29">
<Reactant specieID="Ca"/>
<Reactant specieID="CKCamCa2N"/>
<Product specieID="CKCam1C2N"/>
<forwardRate>0.00301220351758794</forwardRate>
<reverseRate>0.033</reverseRate>
</Reaction>
<Reaction name="reaction31" id="reaction31">
<Reactant specieID="Ca"/>
<Reactant specieID="CKCam1C"/>
<Product specieID="CKCamCa2C"/>
<forwardRate>4.30944465638454E-05</forwardRate>
<reverseRate>0.0027</reverseRate>
</Reaction>
<Reaction name="reaction33" id="reaction33">
<Reactant specieID="Ca"/>
<Reactant specieID="CKCam1C1N"/>
<Product specieID="CKCamCa2C1N"/>
<forwardRate>3.89645994553762E-06</forwardRate>
<reverseRate>0.0027</reverseRate>
</Reaction>
<Reaction name="reaction35" id="reaction35">
<Reactant specieID="Ca"/>
<Reactant specieID="CKCam1C2N"/>
<Product specieID="CKCamCa4"/>
<forwardRate>4.8770569320976E-05</forwardRate>
<reverseRate>0.0027</reverseRate>
</Reaction>
<Reaction name="reaction37" id="reaction37">
<Reactant specieID="Ca"/>
<Reactant specieID="CKCam"/>
<Product specieID="CKCam1N"/>
<forwardRate>4.15674744293578E-05</forwardRate>
<reverseRate>0.3</reverseRate>
</Reaction>
<Reaction name="reaction39" id="reaction39">
<Reactant specieID="Ca"/>
<Reactant specieID="CKCam1N"/>
<Product specieID="CKCamCa2N"/>
<forwardRate>0.000146937287311619</forwardRate>
<reverseRate>0.033</reverseRate>
</Reaction>
<Reaction name="reaction41" id="reaction41">
<Reactant specieID="Ca"/>
<Reactant specieID="CKCam1C"/>
<Product specieID="CKCam1C1N"/>
<forwardRate>0.000452694775449462</forwardRate>
<reverseRate>0.3</reverseRate>
</Reaction>
<Reaction name="reaction43" id="reaction43">
<Reactant specieID="Ca"/>
<Reactant specieID="CKCam1C1N"/>
<Product specieID="CKCam1C2N"/>
<forwardRate>1.82644628099174E-05</forwardRate>
<reverseRate>0.033</reverseRate>
</Reaction>
<Reaction name="reaction45" id="reaction45">
<Reactant specieID="Ca"/>
<Reactant specieID="CKCamCa2C"/>
<Product specieID="CKCamCa2C1N"/>
<forwardRate>4.09311918527532E-05</forwardRate>
<reverseRate>0.3</reverseRate>
</Reaction>
<Reaction name="reaction47" id="reaction47">
<Reactant specieID="Ca"/>
<Reactant specieID="CKCamCa2C1N"/>
<Product specieID="CKCamCa4"/>
<forwardRate>0.000228609625668449</forwardRate>
<reverseRate>0.033</reverseRate>
</Reaction>
<Reaction name="reaction49" id="reaction49">
<Reactant specieID="Cam"/>
<Reactant specieID="CK"/>
<Product specieID="CKCam"/>
<forwardRate>3.8e-09</forwardRate>
</Reaction>
<Reaction name="reaction50" id="reaction50">
<Reactant specieID="CKCam"/>
<Product specieID="Cam"/>
<Product specieID="CK"/>
<forwardRate>0.0055</forwardRate>
</Reaction>
<Reaction name="reaction51" id="reaction51">
<Reactant specieID="Cam1N"/>
<Reactant specieID="CK"/>
<Product specieID="CKCam1N"/>
<forwardRate>2.2e-08</forwardRate>
</Reaction>
<Reaction name="reaction52" id="reaction52">
<Reactant specieID="CKCam1N"/>
<Product specieID="Cam1N"/>
<Product specieID="CK"/>
<forwardRate>0.0031</forwardRate>
</Reaction>
<Reaction name="reaction53" id="reaction53">
<Reactant specieID="CamCa2N"/>
<Reactant specieID="CK"/>
<Product specieID="CKCamCa2N"/>
<forwardRate>1e-07</forwardRate>
</Reaction>
<Reaction name="reaction54" id="reaction54">
<Reactant specieID="CKCamCa2N"/>
<Product specieID="CamCa2N"/>
<Product specieID="CK"/>
<forwardRate>0.0017</forwardRate>
</Reaction>
<Reaction name="reaction55" id="reaction55">
<Reactant specieID="Cam1C"/>
<Reactant specieID="CK"/>
<Product specieID="CKCam1C"/>
<forwardRate>5.899999999999999e-08</forwardRate>
</Reaction>
<Reaction name="reaction56" id="reaction56">
<Reactant specieID="CKCam1C"/>
<Product specieID="Cam1C"/>
<Product specieID="CK"/>
<forwardRate>0.0068</forwardRate>
</Reaction>
<Reaction name="reaction57" id="reaction57">
<Reactant specieID="Cam1C1N"/>
<Reactant specieID="CK"/>
<Product specieID="CKCam1C1N"/>
<forwardRate>3.2999999999999997e-06</forwardRate>
</Reaction>
<Reaction name="reaction58" id="reaction58">
<Reactant specieID="CKCam1C1N"/>
<Product specieID="Cam1C1N"/>
<Product specieID="CK"/>
<forwardRate>0.0034</forwardRate>
</Reaction>
<Reaction name="reaction59" id="reaction59">
<Reactant specieID="Cam1C2N"/>
<Reactant specieID="CK"/>
<Product specieID="CKCam1C2N"/>
<forwardRate>1.8999999999999998e-06</forwardRate>
</Reaction>
<Reaction name="reaction60" id="reaction60">
<Reactant specieID="CKCam1C2N"/>
<Product specieID="Cam1C2N"/>
<Product specieID="CK"/>
<forwardRate>0.0019</forwardRate>
</Reaction>
<Reaction name="reaction61" id="reaction61">
<Reactant specieID="CamCa2C"/>
<Reactant specieID="CK"/>
<Product specieID="CKCamCa2C"/>
<forwardRate>9.2e-07</forwardRate>
</Reaction>
<Reaction name="reaction62" id="reaction62">
<Reactant specieID="CKCamCa2C"/>
<Product specieID="CamCa2C"/>
<Product specieID="CK"/>
<forwardRate>0.0068</forwardRate>
</Reaction>
<Reaction name="reaction63" id="reaction63">
<Reactant specieID="CamCa2C1N"/>
<Reactant specieID="CK"/>
<Product specieID="CKCamCa2C1N"/>
<forwardRate>5.2e-06</forwardRate>
</Reaction>
<Reaction name="reaction64" id="reaction64">
<Reactant specieID="CKCamCa2C1N"/>
<Product specieID="CamCa2C1N"/>
<Product specieID="CK"/>
<forwardRate>0.0038</forwardRate>
</Reaction>
<Reaction name="reaction65" id="reaction65">
<Reactant specieID="CamCa4"/>
<Reactant specieID="CK"/>
<Product specieID="CKCamCa4"/>
<forwardRate>2.9999999999999997e-05</forwardRate>
</Reaction>
<Reaction name="reaction66" id="reaction66">
<Reactant specieID="CKCamCa4"/>
<Product specieID="CamCa4"/>
<Product specieID="CK"/>
<forwardRate>0.0017</forwardRate>
</Reaction>
<Reaction name="reaction67" id="reaction67">
<Reactant specieID="CKCam"/>
<Reactant specieID="CKCam1N"/>
<Product specieID="CKCamcomplex_0_0_0_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction68" id="reaction68">
<Reactant specieID="CKCamcomplex_0_0_0_1"/>
<Product specieID="CKCam"/>
<Product specieID="CKCam1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction69" id="reaction69">
<Reactant specieID="CKCam"/>
<Reactant specieID="CKCamCa2N"/>
<Product specieID="CKCamcomplex_0_0_0_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction70" id="reaction70">
<Reactant specieID="CKCamcomplex_0_0_0_2"/>
<Product specieID="CKCam"/>
<Product specieID="CKCamCa2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction71" id="reaction71">
<Reactant specieID="CKCam"/>
<Reactant specieID="CKCam1C"/>
<Product specieID="CKCamcomplex_0_0_1_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction72" id="reaction72">
<Reactant specieID="CKCamcomplex_0_0_1_0"/>
<Product specieID="CKCam"/>
<Product specieID="CKCam1C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction73" id="reaction73">
<Reactant specieID="CKCam"/>
<Reactant specieID="CKCam1C1N"/>
<Product specieID="CKCamcomplex_0_0_1_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction74" id="reaction74">
<Reactant specieID="CKCamcomplex_0_0_1_1"/>
<Product specieID="CKCam"/>
<Product specieID="CKCam1C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction75" id="reaction75">
<Reactant specieID="CKCam"/>
<Reactant specieID="CKCam1C2N"/>
<Product specieID="CKCamcomplex_0_0_1_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction76" id="reaction76">
<Reactant specieID="CKCamcomplex_0_0_1_2"/>
<Product specieID="CKCam"/>
<Product specieID="CKCam1C2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction77" id="reaction77">
<Reactant specieID="CKCam"/>
<Reactant specieID="CKCamCa2C"/>
<Product specieID="CKCamcomplex_0_0_2_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction78" id="reaction78">
<Reactant specieID="CKCamcomplex_0_0_2_0"/>
<Product specieID="CKCam"/>
<Product specieID="CKCamCa2C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction79" id="reaction79">
<Reactant specieID="CKCam"/>
<Reactant specieID="CKCamCa2C1N"/>
<Product specieID="CKCamcomplex_0_0_2_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction80" id="reaction80">
<Reactant specieID="CKCamcomplex_0_0_2_1"/>
<Product specieID="CKCam"/>
<Product specieID="CKCamCa2C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction81" id="reaction81">
<Reactant specieID="CKCam"/>
<Reactant specieID="CKCamCa4"/>
<Product specieID="CKCamcomplex_0_0_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction82" id="reaction82">
<Reactant specieID="CKCamcomplex_0_0_2_2"/>
<Product specieID="CKCam"/>
<Product specieID="CKCamCa4"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction83" id="reaction83">
<Reactant specieID="CKCam1N"/>
<Reactant specieID="CKCamCa2N"/>
<Product specieID="CKCamcomplex_0_1_0_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction84" id="reaction84">
<Reactant specieID="CKCamcomplex_0_1_0_2"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKCamCa2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction85" id="reaction85">
<Reactant specieID="CKCam1N"/>
<Reactant specieID="CKCam1C"/>
<Product specieID="CKCamcomplex_0_1_1_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction86" id="reaction86">
<Reactant specieID="CKCamcomplex_0_1_1_0"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKCam1C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction87" id="reaction87">
<Reactant specieID="CKCam1N"/>
<Reactant specieID="CKCam1C1N"/>
<Product specieID="CKCamcomplex_0_1_1_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction88" id="reaction88">
<Reactant specieID="CKCamcomplex_0_1_1_1"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKCam1C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction89" id="reaction89">
<Reactant specieID="CKCam1N"/>
<Reactant specieID="CKCam1C2N"/>
<Product specieID="CKCamcomplex_0_1_1_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction90" id="reaction90">
<Reactant specieID="CKCamcomplex_0_1_1_2"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKCam1C2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction91" id="reaction91">
<Reactant specieID="CKCam1N"/>
<Reactant specieID="CKCamCa2C"/>
<Product specieID="CKCamcomplex_0_1_2_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction92" id="reaction92">
<Reactant specieID="CKCamcomplex_0_1_2_0"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKCamCa2C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction93" id="reaction93">
<Reactant specieID="CKCam1N"/>
<Reactant specieID="CKCamCa2C1N"/>
<Product specieID="CKCamcomplex_0_1_2_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction94" id="reaction94">
<Reactant specieID="CKCamcomplex_0_1_2_1"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKCamCa2C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction95" id="reaction95">
<Reactant specieID="CKCam1N"/>
<Reactant specieID="CKCamCa4"/>
<Product specieID="CKCamcomplex_0_1_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction96" id="reaction96">
<Reactant specieID="CKCamcomplex_0_1_2_2"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKCamCa4"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction97" id="reaction97">
<Reactant specieID="CKCamCa2N"/>
<Reactant specieID="CKCam1C"/>
<Product specieID="CKCamcomplex_0_2_1_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction98" id="reaction98">
<Reactant specieID="CKCamcomplex_0_2_1_0"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKCam1C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction99" id="reaction99">
<Reactant specieID="CKCamCa2N"/>
<Reactant specieID="CKCam1C1N"/>
<Product specieID="CKCamcomplex_0_2_1_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction100" id="reaction100">
<Reactant specieID="CKCamcomplex_0_2_1_1"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKCam1C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction101" id="reaction101">
<Reactant specieID="CKCamCa2N"/>
<Reactant specieID="CKCam1C2N"/>
<Product specieID="CKCamcomplex_0_2_1_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction102" id="reaction102">
<Reactant specieID="CKCamcomplex_0_2_1_2"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKCam1C2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction103" id="reaction103">
<Reactant specieID="CKCamCa2N"/>
<Reactant specieID="CKCamCa2C"/>
<Product specieID="CKCamcomplex_0_2_2_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction104" id="reaction104">
<Reactant specieID="CKCamcomplex_0_2_2_0"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKCamCa2C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction105" id="reaction105">
<Reactant specieID="CKCamCa2N"/>
<Reactant specieID="CKCamCa2C1N"/>
<Product specieID="CKCamcomplex_0_2_2_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction106" id="reaction106">
<Reactant specieID="CKCamcomplex_0_2_2_1"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKCamCa2C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction107" id="reaction107">
<Reactant specieID="CKCamCa2N"/>
<Reactant specieID="CKCamCa4"/>
<Product specieID="CKCamcomplex_0_2_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction108" id="reaction108">
<Reactant specieID="CKCamcomplex_0_2_2_2"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKCamCa4"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction109" id="reaction109">
<Reactant specieID="CKCam1C"/>
<Reactant specieID="CKCam1C1N"/>
<Product specieID="CKCamcomplex_1_0_1_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction110" id="reaction110">
<Reactant specieID="CKCamcomplex_1_0_1_1"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKCam1C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction111" id="reaction111">
<Reactant specieID="CKCam1C"/>
<Reactant specieID="CKCam1C2N"/>
<Product specieID="CKCamcomplex_1_0_1_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction112" id="reaction112">
<Reactant specieID="CKCamcomplex_1_0_1_2"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKCam1C2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction113" id="reaction113">
<Reactant specieID="CKCam1C"/>
<Reactant specieID="CKCamCa2C"/>
<Product specieID="CKCamcomplex_1_0_2_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction114" id="reaction114">
<Reactant specieID="CKCamcomplex_1_0_2_0"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKCamCa2C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction115" id="reaction115">
<Reactant specieID="CKCam1C"/>
<Reactant specieID="CKCamCa2C1N"/>
<Product specieID="CKCamcomplex_1_0_2_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction116" id="reaction116">
<Reactant specieID="CKCamcomplex_1_0_2_1"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKCamCa2C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction117" id="reaction117">
<Reactant specieID="CKCam1C"/>
<Reactant specieID="CKCamCa4"/>
<Product specieID="CKCamcomplex_1_0_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction118" id="reaction118">
<Reactant specieID="CKCamcomplex_1_0_2_2"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKCamCa4"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction119" id="reaction119">
<Reactant specieID="CKCam1C1N"/>
<Reactant specieID="CKCam1C2N"/>
<Product specieID="CKCamcomplex_1_1_1_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction120" id="reaction120">
<Reactant specieID="CKCamcomplex_1_1_1_2"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKCam1C2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction121" id="reaction121">
<Reactant specieID="CKCam1C1N"/>
<Reactant specieID="CKCamCa2C"/>
<Product specieID="CKCamcomplex_1_1_2_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction122" id="reaction122">
<Reactant specieID="CKCamcomplex_1_1_2_0"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKCamCa2C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction123" id="reaction123">
<Reactant specieID="CKCam1C1N"/>
<Reactant specieID="CKCamCa2C1N"/>
<Product specieID="CKCamcomplex_1_1_2_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction124" id="reaction124">
<Reactant specieID="CKCamcomplex_1_1_2_1"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKCamCa2C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction125" id="reaction125">
<Reactant specieID="CKCam1C1N"/>
<Reactant specieID="CKCamCa4"/>
<Product specieID="CKCamcomplex_1_1_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction126" id="reaction126">
<Reactant specieID="CKCamcomplex_1_1_2_2"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKCamCa4"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction127" id="reaction127">
<Reactant specieID="CKCam1C2N"/>
<Reactant specieID="CKCamCa2C"/>
<Product specieID="CKCamcomplex_1_2_2_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction128" id="reaction128">
<Reactant specieID="CKCamcomplex_1_2_2_0"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKCamCa2C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction129" id="reaction129">
<Reactant specieID="CKCam1C2N"/>
<Reactant specieID="CKCamCa2C1N"/>
<Product specieID="CKCamcomplex_1_2_2_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction130" id="reaction130">
<Reactant specieID="CKCamcomplex_1_2_2_1"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKCamCa2C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction131" id="reaction131">
<Reactant specieID="CKCam1C2N"/>
<Reactant specieID="CKCamCa4"/>
<Product specieID="CKCamcomplex_1_2_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction132" id="reaction132">
<Reactant specieID="CKCamcomplex_1_2_2_2"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKCamCa4"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction133" id="reaction133">
<Reactant specieID="CKCamCa2C"/>
<Reactant specieID="CKCamCa2C1N"/>
<Product specieID="CKCamcomplex_2_0_2_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction134" id="reaction134">
<Reactant specieID="CKCamcomplex_2_0_2_1"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKCamCa2C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction135" id="reaction135">
<Reactant specieID="CKCamCa2C"/>
<Reactant specieID="CKCamCa4"/>
<Product specieID="CKCamcomplex_2_0_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction136" id="reaction136">
<Reactant specieID="CKCamcomplex_2_0_2_2"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKCamCa4"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction137" id="reaction137">
<Reactant specieID="CKCamCa2C1N"/>
<Reactant specieID="CKCamCa4"/>
<Product specieID="CKCamcomplex_2_1_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction138" id="reaction138">
<Reactant specieID="CKCamcomplex_2_1_2_2"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKCamCa4"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction139" id="reaction139">
<Reactant specieID="CKCam" power="2"/>
<Product specieID="CKCamcomplex_0_0_0_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction140" id="reaction140">
<Reactant specieID="CKCamcomplex_0_0_0_0"/>
<Product specieID="CKCam" power="2"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction141" id="reaction141">
<Reactant specieID="CKCam1N" power="2"/>
<Product specieID="CKCamcomplex_0_1_0_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction142" id="reaction142">
<Reactant specieID="CKCamcomplex_0_1_0_1"/>
<Product specieID="CKCam1N" power="2"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction143" id="reaction143">
<Reactant specieID="CKCamCa2N" power="2"/>
<Product specieID="CKCamcomplex_0_2_0_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction144" id="reaction144">
<Reactant specieID="CKCamcomplex_0_2_0_2"/>
<Product specieID="CKCamCa2N" power="2"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction145" id="reaction145">
<Reactant specieID="CKCam1C" power="2"/>
<Product specieID="CKCamcomplex_1_0_1_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction146" id="reaction146">
<Reactant specieID="CKCamcomplex_1_0_1_0"/>
<Product specieID="CKCam1C" power="2"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction147" id="reaction147">
<Reactant specieID="CKCam1C1N" power="2"/>
<Product specieID="CKCamcomplex_1_1_1_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction148" id="reaction148">
<Reactant specieID="CKCamcomplex_1_1_1_1"/>
<Product specieID="CKCam1C1N" power="2"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction149" id="reaction149">
<Reactant specieID="CKCam1C2N" power="2"/>
<Product specieID="CKCamcomplex_1_2_1_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction150" id="reaction150">
<Reactant specieID="CKCamcomplex_1_2_1_2"/>
<Product specieID="CKCam1C2N" power="2"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction151" id="reaction151">
<Reactant specieID="CKCamCa2C" power="2"/>
<Product specieID="CKCamcomplex_2_0_2_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction152" id="reaction152">
<Reactant specieID="CKCamcomplex_2_0_2_0"/>
<Product specieID="CKCamCa2C" power="2"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction153" id="reaction153">
<Reactant specieID="CKCamCa2C1N" power="2"/>
<Product specieID="CKCamcomplex_2_1_2_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction154" id="reaction154">
<Reactant specieID="CKCamcomplex_2_1_2_1"/>
<Product specieID="CKCamCa2C1N" power="2"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction155" id="reaction155">
<Reactant specieID="CKCamCa4" power="2"/>
<Product specieID="CKCamcomplex_2_2_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction156" id="reaction156">
<Reactant specieID="CKCamcomplex_2_2_2_2"/>
<Product specieID="CKCamCa4" power="2"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction157" id="reaction157">
<Reactant specieID="CKCamcomplex_0_0_0_1"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCam"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction158" id="reaction158">
<Reactant specieID="CKCamcomplex_0_0_0_1"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCam1N"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction159" id="reaction159">
<Reactant specieID="CKCamcomplex_0_0_0_2"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCam"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction160" id="reaction160">
<Reactant specieID="CKCamcomplex_0_0_0_2"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction161" id="reaction161">
<Reactant specieID="CKCamcomplex_0_0_1_0"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCam"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction162" id="reaction162">
<Reactant specieID="CKCamcomplex_0_0_1_0"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCam1C"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction163" id="reaction163">
<Reactant specieID="CKCamcomplex_0_0_1_1"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCam"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction164" id="reaction164">
<Reactant specieID="CKCamcomplex_0_0_1_1"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction165" id="reaction165">
<Reactant specieID="CKCamcomplex_0_0_1_2"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCam"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction166" id="reaction166">
<Reactant specieID="CKCamcomplex_0_0_1_2"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction167" id="reaction167">
<Reactant specieID="CKCamcomplex_0_0_2_0"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCam"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction168" id="reaction168">
<Reactant specieID="CKCamcomplex_0_0_2_0"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction169" id="reaction169">
<Reactant specieID="CKCamcomplex_0_0_2_1"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCam"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction170" id="reaction170">
<Reactant specieID="CKCamcomplex_0_0_2_1"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction171" id="reaction171">
<Reactant specieID="CKCamcomplex_0_0_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCam"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction172" id="reaction172">
<Reactant specieID="CKCamcomplex_0_0_2_2"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00096</forwardRate>
</Reaction>
<Reaction name="reaction173" id="reaction173">
<Reactant specieID="CKCamcomplex_0_1_0_2"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCam1N"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction174" id="reaction174">
<Reactant specieID="CKCamcomplex_0_1_0_2"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction175" id="reaction175">
<Reactant specieID="CKCamcomplex_0_1_1_0"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCam1N"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction176" id="reaction176">
<Reactant specieID="CKCamcomplex_0_1_1_0"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCam1C"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction177" id="reaction177">
<Reactant specieID="CKCamcomplex_0_1_1_1"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCam1N"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction178" id="reaction178">
<Reactant specieID="CKCamcomplex_0_1_1_1"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction179" id="reaction179">
<Reactant specieID="CKCamcomplex_0_1_1_2"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCam1N"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction180" id="reaction180">
<Reactant specieID="CKCamcomplex_0_1_1_2"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction181" id="reaction181">
<Reactant specieID="CKCamcomplex_0_1_2_0"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCam1N"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction182" id="reaction182">
<Reactant specieID="CKCamcomplex_0_1_2_0"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction183" id="reaction183">
<Reactant specieID="CKCamcomplex_0_1_2_1"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCam1N"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction184" id="reaction184">
<Reactant specieID="CKCamcomplex_0_1_2_1"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction185" id="reaction185">
<Reactant specieID="CKCamcomplex_0_1_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCam1N"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction186" id="reaction186">
<Reactant specieID="CKCamcomplex_0_1_2_2"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00096</forwardRate>
</Reaction>
<Reaction name="reaction187" id="reaction187">
<Reactant specieID="CKCamcomplex_0_2_1_0"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction188" id="reaction188">
<Reactant specieID="CKCamcomplex_0_2_1_0"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCam1C"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction189" id="reaction189">
<Reactant specieID="CKCamcomplex_0_2_1_1"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction190" id="reaction190">
<Reactant specieID="CKCamcomplex_0_2_1_1"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction191" id="reaction191">
<Reactant specieID="CKCamcomplex_0_2_1_2"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction192" id="reaction192">
<Reactant specieID="CKCamcomplex_0_2_1_2"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction193" id="reaction193">
<Reactant specieID="CKCamcomplex_0_2_2_0"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction194" id="reaction194">
<Reactant specieID="CKCamcomplex_0_2_2_0"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction195" id="reaction195">
<Reactant specieID="CKCamcomplex_0_2_2_1"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction196" id="reaction196">
<Reactant specieID="CKCamcomplex_0_2_2_1"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction197" id="reaction197">
<Reactant specieID="CKCamcomplex_0_2_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction198" id="reaction198">
<Reactant specieID="CKCamcomplex_0_2_2_2"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00096</forwardRate>
</Reaction>
<Reaction name="reaction199" id="reaction199">
<Reactant specieID="CKCamcomplex_1_0_1_1"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCam1C"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction200" id="reaction200">
<Reactant specieID="CKCamcomplex_1_0_1_1"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction201" id="reaction201">
<Reactant specieID="CKCamcomplex_1_0_1_2"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCam1C"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction202" id="reaction202">
<Reactant specieID="CKCamcomplex_1_0_1_2"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction203" id="reaction203">
<Reactant specieID="CKCamcomplex_1_0_2_0"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCam1C"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction204" id="reaction204">
<Reactant specieID="CKCamcomplex_1_0_2_0"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction205" id="reaction205">
<Reactant specieID="CKCamcomplex_1_0_2_1"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCam1C"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction206" id="reaction206">
<Reactant specieID="CKCamcomplex_1_0_2_1"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction207" id="reaction207">
<Reactant specieID="CKCamcomplex_1_0_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCam1C"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction208" id="reaction208">
<Reactant specieID="CKCamcomplex_1_0_2_2"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00096</forwardRate>
</Reaction>
<Reaction name="reaction209" id="reaction209">
<Reactant specieID="CKCamcomplex_1_1_1_2"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction210" id="reaction210">
<Reactant specieID="CKCamcomplex_1_1_1_2"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction211" id="reaction211">
<Reactant specieID="CKCamcomplex_1_1_2_0"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction212" id="reaction212">
<Reactant specieID="CKCamcomplex_1_1_2_0"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction213" id="reaction213">
<Reactant specieID="CKCamcomplex_1_1_2_1"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction214" id="reaction214">
<Reactant specieID="CKCamcomplex_1_1_2_1"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction215" id="reaction215">
<Reactant specieID="CKCamcomplex_1_1_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction216" id="reaction216">
<Reactant specieID="CKCamcomplex_1_1_2_2"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00096</forwardRate>
</Reaction>
<Reaction name="reaction217" id="reaction217">
<Reactant specieID="CKCamcomplex_1_2_2_0"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction218" id="reaction218">
<Reactant specieID="CKCamcomplex_1_2_2_0"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction219" id="reaction219">
<Reactant specieID="CKCamcomplex_1_2_2_1"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction220" id="reaction220">
<Reactant specieID="CKCamcomplex_1_2_2_1"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction221" id="reaction221">
<Reactant specieID="CKCamcomplex_1_2_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction222" id="reaction222">
<Reactant specieID="CKCamcomplex_1_2_2_2"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00096</forwardRate>
</Reaction>
<Reaction name="reaction223" id="reaction223">
<Reactant specieID="CKCamcomplex_2_0_2_1"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction224" id="reaction224">
<Reactant specieID="CKCamcomplex_2_0_2_1"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction225" id="reaction225">
<Reactant specieID="CKCamcomplex_2_0_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction226" id="reaction226">
<Reactant specieID="CKCamcomplex_2_0_2_2"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00096</forwardRate>
</Reaction>
<Reaction name="reaction227" id="reaction227">
<Reactant specieID="CKCamcomplex_2_1_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction228" id="reaction228">
<Reactant specieID="CKCamcomplex_2_1_2_2"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00096</forwardRate>
</Reaction>
<Reaction name="reaction229" id="reaction229">
<Reactant specieID="CKCamcomplex_0_0_0_0"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCam"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction230" id="reaction230">
<Reactant specieID="CKCamcomplex_0_1_0_1"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCam1N"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction231" id="reaction231">
<Reactant specieID="CKCamcomplex_0_2_0_2"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction232" id="reaction232">
<Reactant specieID="CKCamcomplex_1_0_1_0"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCam1C"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction233" id="reaction233">
<Reactant specieID="CKCamcomplex_1_1_1_1"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction234" id="reaction234">
<Reactant specieID="CKCamcomplex_1_2_1_2"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction235" id="reaction235">
<Reactant specieID="CKCamcomplex_2_0_2_0"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction236" id="reaction236">
<Reactant specieID="CKCamcomplex_2_1_2_1"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction237" id="reaction237">
<Reactant specieID="CKCamcomplex_2_2_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00096</forwardRate>
</Reaction>
<Reaction name="reaction238" id="reaction238">
<Reactant specieID="CKCam"/>
<Reactant specieID="CKpCam"/>
<Product specieID="CKpCamcomplex_0_0_0_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction239" id="reaction239">
<Reactant specieID="CKpCamcomplex_0_0_0_0"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCam"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction240" id="reaction240">
<Reactant specieID="CKCam1N"/>
<Reactant specieID="CKpCam"/>
<Product specieID="CKpCamcomplex_0_0_0_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction241" id="reaction241">
<Reactant specieID="CKpCamcomplex_0_0_0_1"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCam"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction242" id="reaction242">
<Reactant specieID="CKCamCa2N"/>
<Reactant specieID="CKpCam"/>
<Product specieID="CKpCamcomplex_0_0_0_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction243" id="reaction243">
<Reactant specieID="CKpCamcomplex_0_0_0_2"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCam"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction244" id="reaction244">
<Reactant specieID="CKCam1C"/>
<Reactant specieID="CKpCam"/>
<Product specieID="CKpCamcomplex_0_0_1_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction245" id="reaction245">
<Reactant specieID="CKpCamcomplex_0_0_1_0"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCam"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction246" id="reaction246">
<Reactant specieID="CKCam1C1N"/>
<Reactant specieID="CKpCam"/>
<Product specieID="CKpCamcomplex_0_0_1_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction247" id="reaction247">
<Reactant specieID="CKpCamcomplex_0_0_1_1"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCam"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction248" id="reaction248">
<Reactant specieID="CKCam1C2N"/>
<Reactant specieID="CKpCam"/>
<Product specieID="CKpCamcomplex_0_0_1_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction249" id="reaction249">
<Reactant specieID="CKpCamcomplex_0_0_1_2"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCam"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction250" id="reaction250">
<Reactant specieID="CKCamCa2C"/>
<Reactant specieID="CKpCam"/>
<Product specieID="CKpCamcomplex_0_0_2_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction251" id="reaction251">
<Reactant specieID="CKpCamcomplex_0_0_2_0"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCam"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction252" id="reaction252">
<Reactant specieID="CKCamCa2C1N"/>
<Reactant specieID="CKpCam"/>
<Product specieID="CKpCamcomplex_0_0_2_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction253" id="reaction253">
<Reactant specieID="CKpCamcomplex_0_0_2_1"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCam"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction254" id="reaction254">
<Reactant specieID="CKCamCa4"/>
<Reactant specieID="CKpCam"/>
<Product specieID="CKpCamcomplex_0_0_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction255" id="reaction255">
<Reactant specieID="CKpCamcomplex_0_0_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCam"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction256" id="reaction256">
<Reactant specieID="CKCam"/>
<Reactant specieID="CKpCam1N"/>
<Product specieID="CKpCamcomplex_0_1_0_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction257" id="reaction257">
<Reactant specieID="CKpCamcomplex_0_1_0_0"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCam1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction258" id="reaction258">
<Reactant specieID="CKCam1N"/>
<Reactant specieID="CKpCam1N"/>
<Product specieID="CKpCamcomplex_0_1_0_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction259" id="reaction259">
<Reactant specieID="CKpCamcomplex_0_1_0_1"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCam1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction260" id="reaction260">
<Reactant specieID="CKCamCa2N"/>
<Reactant specieID="CKpCam1N"/>
<Product specieID="CKpCamcomplex_0_1_0_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction261" id="reaction261">
<Reactant specieID="CKpCamcomplex_0_1_0_2"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCam1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction262" id="reaction262">
<Reactant specieID="CKCam1C"/>
<Reactant specieID="CKpCam1N"/>
<Product specieID="CKpCamcomplex_0_1_1_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction263" id="reaction263">
<Reactant specieID="CKpCamcomplex_0_1_1_0"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCam1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction264" id="reaction264">
<Reactant specieID="CKCam1C1N"/>
<Reactant specieID="CKpCam1N"/>
<Product specieID="CKpCamcomplex_0_1_1_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction265" id="reaction265">
<Reactant specieID="CKpCamcomplex_0_1_1_1"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCam1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction266" id="reaction266">
<Reactant specieID="CKCam1C2N"/>
<Reactant specieID="CKpCam1N"/>
<Product specieID="CKpCamcomplex_0_1_1_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction267" id="reaction267">
<Reactant specieID="CKpCamcomplex_0_1_1_2"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCam1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction268" id="reaction268">
<Reactant specieID="CKCamCa2C"/>
<Reactant specieID="CKpCam1N"/>
<Product specieID="CKpCamcomplex_0_1_2_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction269" id="reaction269">
<Reactant specieID="CKpCamcomplex_0_1_2_0"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCam1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction270" id="reaction270">
<Reactant specieID="CKCamCa2C1N"/>
<Reactant specieID="CKpCam1N"/>
<Product specieID="CKpCamcomplex_0_1_2_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction271" id="reaction271">
<Reactant specieID="CKpCamcomplex_0_1_2_1"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCam1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction272" id="reaction272">
<Reactant specieID="CKCamCa4"/>
<Reactant specieID="CKpCam1N"/>
<Product specieID="CKpCamcomplex_0_1_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction273" id="reaction273">
<Reactant specieID="CKpCamcomplex_0_1_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCam1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction274" id="reaction274">
<Reactant specieID="CKCam"/>
<Reactant specieID="CKpCamCa2N"/>
<Product specieID="CKpCamcomplex_0_2_0_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction275" id="reaction275">
<Reactant specieID="CKpCamcomplex_0_2_0_0"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction276" id="reaction276">
<Reactant specieID="CKCam1N"/>
<Reactant specieID="CKpCamCa2N"/>
<Product specieID="CKpCamcomplex_0_2_0_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction277" id="reaction277">
<Reactant specieID="CKpCamcomplex_0_2_0_1"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction278" id="reaction278">
<Reactant specieID="CKCamCa2N"/>
<Reactant specieID="CKpCamCa2N"/>
<Product specieID="CKpCamcomplex_0_2_0_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction279" id="reaction279">
<Reactant specieID="CKpCamcomplex_0_2_0_2"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction280" id="reaction280">
<Reactant specieID="CKCam1C"/>
<Reactant specieID="CKpCamCa2N"/>
<Product specieID="CKpCamcomplex_0_2_1_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction281" id="reaction281">
<Reactant specieID="CKpCamcomplex_0_2_1_0"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction282" id="reaction282">
<Reactant specieID="CKCam1C1N"/>
<Reactant specieID="CKpCamCa2N"/>
<Product specieID="CKpCamcomplex_0_2_1_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction283" id="reaction283">
<Reactant specieID="CKpCamcomplex_0_2_1_1"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction284" id="reaction284">
<Reactant specieID="CKCam1C2N"/>
<Reactant specieID="CKpCamCa2N"/>
<Product specieID="CKpCamcomplex_0_2_1_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction285" id="reaction285">
<Reactant specieID="CKpCamcomplex_0_2_1_2"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction286" id="reaction286">
<Reactant specieID="CKCamCa2C"/>
<Reactant specieID="CKpCamCa2N"/>
<Product specieID="CKpCamcomplex_0_2_2_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction287" id="reaction287">
<Reactant specieID="CKpCamcomplex_0_2_2_0"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction288" id="reaction288">
<Reactant specieID="CKCamCa2C1N"/>
<Reactant specieID="CKpCamCa2N"/>
<Product specieID="CKpCamcomplex_0_2_2_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction289" id="reaction289">
<Reactant specieID="CKpCamcomplex_0_2_2_1"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction290" id="reaction290">
<Reactant specieID="CKCamCa4"/>
<Reactant specieID="CKpCamCa2N"/>
<Product specieID="CKpCamcomplex_0_2_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction291" id="reaction291">
<Reactant specieID="CKpCamcomplex_0_2_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction292" id="reaction292">
<Reactant specieID="CKCam"/>
<Reactant specieID="CKpCam1C"/>
<Product specieID="CKpCamcomplex_1_0_0_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction293" id="reaction293">
<Reactant specieID="CKpCamcomplex_1_0_0_0"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCam1C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction294" id="reaction294">
<Reactant specieID="CKCam1N"/>
<Reactant specieID="CKpCam1C"/>
<Product specieID="CKpCamcomplex_1_0_0_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction295" id="reaction295">
<Reactant specieID="CKpCamcomplex_1_0_0_1"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCam1C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction296" id="reaction296">
<Reactant specieID="CKCamCa2N"/>
<Reactant specieID="CKpCam1C"/>
<Product specieID="CKpCamcomplex_1_0_0_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction297" id="reaction297">
<Reactant specieID="CKpCamcomplex_1_0_0_2"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCam1C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction298" id="reaction298">
<Reactant specieID="CKCam1C"/>
<Reactant specieID="CKpCam1C"/>
<Product specieID="CKpCamcomplex_1_0_1_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction299" id="reaction299">
<Reactant specieID="CKpCamcomplex_1_0_1_0"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCam1C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction300" id="reaction300">
<Reactant specieID="CKCam1C1N"/>
<Reactant specieID="CKpCam1C"/>
<Product specieID="CKpCamcomplex_1_0_1_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction301" id="reaction301">
<Reactant specieID="CKpCamcomplex_1_0_1_1"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCam1C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction302" id="reaction302">
<Reactant specieID="CKCam1C2N"/>
<Reactant specieID="CKpCam1C"/>
<Product specieID="CKpCamcomplex_1_0_1_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction303" id="reaction303">
<Reactant specieID="CKpCamcomplex_1_0_1_2"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCam1C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction304" id="reaction304">
<Reactant specieID="CKCamCa2C"/>
<Reactant specieID="CKpCam1C"/>
<Product specieID="CKpCamcomplex_1_0_2_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction305" id="reaction305">
<Reactant specieID="CKpCamcomplex_1_0_2_0"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCam1C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction306" id="reaction306">
<Reactant specieID="CKCamCa2C1N"/>
<Reactant specieID="CKpCam1C"/>
<Product specieID="CKpCamcomplex_1_0_2_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction307" id="reaction307">
<Reactant specieID="CKpCamcomplex_1_0_2_1"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCam1C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction308" id="reaction308">
<Reactant specieID="CKCamCa4"/>
<Reactant specieID="CKpCam1C"/>
<Product specieID="CKpCamcomplex_1_0_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction309" id="reaction309">
<Reactant specieID="CKpCamcomplex_1_0_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCam1C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction310" id="reaction310">
<Reactant specieID="CKCam"/>
<Reactant specieID="CKpCam1C1N"/>
<Product specieID="CKpCamcomplex_1_1_0_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction311" id="reaction311">
<Reactant specieID="CKpCamcomplex_1_1_0_0"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction312" id="reaction312">
<Reactant specieID="CKCam1N"/>
<Reactant specieID="CKpCam1C1N"/>
<Product specieID="CKpCamcomplex_1_1_0_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction313" id="reaction313">
<Reactant specieID="CKpCamcomplex_1_1_0_1"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction314" id="reaction314">
<Reactant specieID="CKCamCa2N"/>
<Reactant specieID="CKpCam1C1N"/>
<Product specieID="CKpCamcomplex_1_1_0_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction315" id="reaction315">
<Reactant specieID="CKpCamcomplex_1_1_0_2"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction316" id="reaction316">
<Reactant specieID="CKCam1C"/>
<Reactant specieID="CKpCam1C1N"/>
<Product specieID="CKpCamcomplex_1_1_1_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction317" id="reaction317">
<Reactant specieID="CKpCamcomplex_1_1_1_0"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction318" id="reaction318">
<Reactant specieID="CKCam1C1N"/>
<Reactant specieID="CKpCam1C1N"/>
<Product specieID="CKpCamcomplex_1_1_1_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction319" id="reaction319">
<Reactant specieID="CKpCamcomplex_1_1_1_1"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction320" id="reaction320">
<Reactant specieID="CKCam1C2N"/>
<Reactant specieID="CKpCam1C1N"/>
<Product specieID="CKpCamcomplex_1_1_1_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction321" id="reaction321">
<Reactant specieID="CKpCamcomplex_1_1_1_2"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction322" id="reaction322">
<Reactant specieID="CKCamCa2C"/>
<Reactant specieID="CKpCam1C1N"/>
<Product specieID="CKpCamcomplex_1_1_2_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction323" id="reaction323">
<Reactant specieID="CKpCamcomplex_1_1_2_0"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction324" id="reaction324">
<Reactant specieID="CKCamCa2C1N"/>
<Reactant specieID="CKpCam1C1N"/>
<Product specieID="CKpCamcomplex_1_1_2_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction325" id="reaction325">
<Reactant specieID="CKpCamcomplex_1_1_2_1"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction326" id="reaction326">
<Reactant specieID="CKCamCa4"/>
<Reactant specieID="CKpCam1C1N"/>
<Product specieID="CKpCamcomplex_1_1_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction327" id="reaction327">
<Reactant specieID="CKpCamcomplex_1_1_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction328" id="reaction328">
<Reactant specieID="CKCam"/>
<Reactant specieID="CKpCam1C2N"/>
<Product specieID="CKpCamcomplex_1_2_0_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction329" id="reaction329">
<Reactant specieID="CKpCamcomplex_1_2_0_0"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction330" id="reaction330">
<Reactant specieID="CKCam1N"/>
<Reactant specieID="CKpCam1C2N"/>
<Product specieID="CKpCamcomplex_1_2_0_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction331" id="reaction331">
<Reactant specieID="CKpCamcomplex_1_2_0_1"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction332" id="reaction332">
<Reactant specieID="CKCamCa2N"/>
<Reactant specieID="CKpCam1C2N"/>
<Product specieID="CKpCamcomplex_1_2_0_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction333" id="reaction333">
<Reactant specieID="CKpCamcomplex_1_2_0_2"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction334" id="reaction334">
<Reactant specieID="CKCam1C"/>
<Reactant specieID="CKpCam1C2N"/>
<Product specieID="CKpCamcomplex_1_2_1_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction335" id="reaction335">
<Reactant specieID="CKpCamcomplex_1_2_1_0"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction336" id="reaction336">
<Reactant specieID="CKCam1C1N"/>
<Reactant specieID="CKpCam1C2N"/>
<Product specieID="CKpCamcomplex_1_2_1_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction337" id="reaction337">
<Reactant specieID="CKpCamcomplex_1_2_1_1"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction338" id="reaction338">
<Reactant specieID="CKCam1C2N"/>
<Reactant specieID="CKpCam1C2N"/>
<Product specieID="CKpCamcomplex_1_2_1_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction339" id="reaction339">
<Reactant specieID="CKpCamcomplex_1_2_1_2"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction340" id="reaction340">
<Reactant specieID="CKCamCa2C"/>
<Reactant specieID="CKpCam1C2N"/>
<Product specieID="CKpCamcomplex_1_2_2_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction341" id="reaction341">
<Reactant specieID="CKpCamcomplex_1_2_2_0"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction342" id="reaction342">
<Reactant specieID="CKCamCa2C1N"/>
<Reactant specieID="CKpCam1C2N"/>
<Product specieID="CKpCamcomplex_1_2_2_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction343" id="reaction343">
<Reactant specieID="CKpCamcomplex_1_2_2_1"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction344" id="reaction344">
<Reactant specieID="CKCamCa4"/>
<Reactant specieID="CKpCam1C2N"/>
<Product specieID="CKpCamcomplex_1_2_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction345" id="reaction345">
<Reactant specieID="CKpCamcomplex_1_2_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction346" id="reaction346">
<Reactant specieID="CKCam"/>
<Reactant specieID="CKpCamCa2C"/>
<Product specieID="CKpCamcomplex_2_0_0_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction347" id="reaction347">
<Reactant specieID="CKpCamcomplex_2_0_0_0"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction348" id="reaction348">
<Reactant specieID="CKCam1N"/>
<Reactant specieID="CKpCamCa2C"/>
<Product specieID="CKpCamcomplex_2_0_0_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction349" id="reaction349">
<Reactant specieID="CKpCamcomplex_2_0_0_1"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction350" id="reaction350">
<Reactant specieID="CKCamCa2N"/>
<Reactant specieID="CKpCamCa2C"/>
<Product specieID="CKpCamcomplex_2_0_0_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction351" id="reaction351">
<Reactant specieID="CKpCamcomplex_2_0_0_2"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction352" id="reaction352">
<Reactant specieID="CKCam1C"/>
<Reactant specieID="CKpCamCa2C"/>
<Product specieID="CKpCamcomplex_2_0_1_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction353" id="reaction353">
<Reactant specieID="CKpCamcomplex_2_0_1_0"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction354" id="reaction354">
<Reactant specieID="CKCam1C1N"/>
<Reactant specieID="CKpCamCa2C"/>
<Product specieID="CKpCamcomplex_2_0_1_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction355" id="reaction355">
<Reactant specieID="CKpCamcomplex_2_0_1_1"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction356" id="reaction356">
<Reactant specieID="CKCam1C2N"/>
<Reactant specieID="CKpCamCa2C"/>
<Product specieID="CKpCamcomplex_2_0_1_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction357" id="reaction357">
<Reactant specieID="CKpCamcomplex_2_0_1_2"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction358" id="reaction358">
<Reactant specieID="CKCamCa2C"/>
<Reactant specieID="CKpCamCa2C"/>
<Product specieID="CKpCamcomplex_2_0_2_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction359" id="reaction359">
<Reactant specieID="CKpCamcomplex_2_0_2_0"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction360" id="reaction360">
<Reactant specieID="CKCamCa2C1N"/>
<Reactant specieID="CKpCamCa2C"/>
<Product specieID="CKpCamcomplex_2_0_2_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction361" id="reaction361">
<Reactant specieID="CKpCamcomplex_2_0_2_1"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction362" id="reaction362">
<Reactant specieID="CKCamCa4"/>
<Reactant specieID="CKpCamCa2C"/>
<Product specieID="CKpCamcomplex_2_0_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction363" id="reaction363">
<Reactant specieID="CKpCamcomplex_2_0_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction364" id="reaction364">
<Reactant specieID="CKCam"/>
<Reactant specieID="CKpCamCa2C1N"/>
<Product specieID="CKpCamcomplex_2_1_0_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction365" id="reaction365">
<Reactant specieID="CKpCamcomplex_2_1_0_0"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction366" id="reaction366">
<Reactant specieID="CKCam1N"/>
<Reactant specieID="CKpCamCa2C1N"/>
<Product specieID="CKpCamcomplex_2_1_0_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction367" id="reaction367">
<Reactant specieID="CKpCamcomplex_2_1_0_1"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction368" id="reaction368">
<Reactant specieID="CKCamCa2N"/>
<Reactant specieID="CKpCamCa2C1N"/>
<Product specieID="CKpCamcomplex_2_1_0_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction369" id="reaction369">
<Reactant specieID="CKpCamcomplex_2_1_0_2"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction370" id="reaction370">
<Reactant specieID="CKCam1C"/>
<Reactant specieID="CKpCamCa2C1N"/>
<Product specieID="CKpCamcomplex_2_1_1_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction371" id="reaction371">
<Reactant specieID="CKpCamcomplex_2_1_1_0"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction372" id="reaction372">
<Reactant specieID="CKCam1C1N"/>
<Reactant specieID="CKpCamCa2C1N"/>
<Product specieID="CKpCamcomplex_2_1_1_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction373" id="reaction373">
<Reactant specieID="CKpCamcomplex_2_1_1_1"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction374" id="reaction374">
<Reactant specieID="CKCam1C2N"/>
<Reactant specieID="CKpCamCa2C1N"/>
<Product specieID="CKpCamcomplex_2_1_1_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction375" id="reaction375">
<Reactant specieID="CKpCamcomplex_2_1_1_2"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction376" id="reaction376">
<Reactant specieID="CKCamCa2C"/>
<Reactant specieID="CKpCamCa2C1N"/>
<Product specieID="CKpCamcomplex_2_1_2_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction377" id="reaction377">
<Reactant specieID="CKpCamcomplex_2_1_2_0"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction378" id="reaction378">
<Reactant specieID="CKCamCa2C1N"/>
<Reactant specieID="CKpCamCa2C1N"/>
<Product specieID="CKpCamcomplex_2_1_2_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction379" id="reaction379">
<Reactant specieID="CKpCamcomplex_2_1_2_1"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction380" id="reaction380">
<Reactant specieID="CKCamCa4"/>
<Reactant specieID="CKpCamCa2C1N"/>
<Product specieID="CKpCamcomplex_2_1_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction381" id="reaction381">
<Reactant specieID="CKpCamcomplex_2_1_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction382" id="reaction382">
<Reactant specieID="CKCam"/>
<Reactant specieID="CKpCamCa4"/>
<Product specieID="CKpCamcomplex_2_2_0_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction383" id="reaction383">
<Reactant specieID="CKpCamcomplex_2_2_0_0"/>
<Product specieID="CKCam"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction384" id="reaction384">
<Reactant specieID="CKCam1N"/>
<Reactant specieID="CKpCamCa4"/>
<Product specieID="CKpCamcomplex_2_2_0_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction385" id="reaction385">
<Reactant specieID="CKpCamcomplex_2_2_0_1"/>
<Product specieID="CKCam1N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction386" id="reaction386">
<Reactant specieID="CKCamCa2N"/>
<Reactant specieID="CKpCamCa4"/>
<Product specieID="CKpCamcomplex_2_2_0_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction387" id="reaction387">
<Reactant specieID="CKpCamcomplex_2_2_0_2"/>
<Product specieID="CKCamCa2N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction388" id="reaction388">
<Reactant specieID="CKCam1C"/>
<Reactant specieID="CKpCamCa4"/>
<Product specieID="CKpCamcomplex_2_2_1_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction389" id="reaction389">
<Reactant specieID="CKpCamcomplex_2_2_1_0"/>
<Product specieID="CKCam1C"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction390" id="reaction390">
<Reactant specieID="CKCam1C1N"/>
<Reactant specieID="CKpCamCa4"/>
<Product specieID="CKpCamcomplex_2_2_1_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction391" id="reaction391">
<Reactant specieID="CKpCamcomplex_2_2_1_1"/>
<Product specieID="CKCam1C1N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction392" id="reaction392">
<Reactant specieID="CKCam1C2N"/>
<Reactant specieID="CKpCamCa4"/>
<Product specieID="CKpCamcomplex_2_2_1_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction393" id="reaction393">
<Reactant specieID="CKpCamcomplex_2_2_1_2"/>
<Product specieID="CKCam1C2N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction394" id="reaction394">
<Reactant specieID="CKCamCa2C"/>
<Reactant specieID="CKpCamCa4"/>
<Product specieID="CKpCamcomplex_2_2_2_0"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction395" id="reaction395">
<Reactant specieID="CKpCamcomplex_2_2_2_0"/>
<Product specieID="CKCamCa2C"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction396" id="reaction396">
<Reactant specieID="CKCamCa2C1N"/>
<Reactant specieID="CKpCamCa4"/>
<Product specieID="CKpCamcomplex_2_2_2_1"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction397" id="reaction397">
<Reactant specieID="CKpCamcomplex_2_2_2_1"/>
<Product specieID="CKCamCa2C1N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction398" id="reaction398">
<Reactant specieID="CKCamCa4"/>
<Reactant specieID="CKpCamCa4"/>
<Product specieID="CKpCamcomplex_2_2_2_2"/>
<forwardRate>4.9999999999999996e-05</forwardRate>
</Reaction>
<Reaction name="reaction399" id="reaction399">
<Reactant specieID="CKpCamcomplex_2_2_2_2"/>
<Product specieID="CKCamCa4"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.06</forwardRate>
</Reaction>
<Reaction name="reaction400" id="reaction400">
<Reactant specieID="CKpCamcomplex_0_0_0_0"/>
<Product specieID="CKpCam" power="2"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction401" id="reaction401">
<Reactant specieID="CKpCamcomplex_0_0_0_1"/>
<Product specieID="CKpCam"/>
<Product specieID="CKpCam1N"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction402" id="reaction402">
<Reactant specieID="CKpCamcomplex_0_0_0_2"/>
<Product specieID="CKpCam"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction403" id="reaction403">
<Reactant specieID="CKpCamcomplex_0_0_1_0"/>
<Product specieID="CKpCam"/>
<Product specieID="CKpCam1C"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction404" id="reaction404">
<Reactant specieID="CKpCamcomplex_0_0_1_1"/>
<Product specieID="CKpCam"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction405" id="reaction405">
<Reactant specieID="CKpCamcomplex_0_0_1_2"/>
<Product specieID="CKpCam"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction406" id="reaction406">
<Reactant specieID="CKpCamcomplex_0_0_2_0"/>
<Product specieID="CKpCam"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction407" id="reaction407">
<Reactant specieID="CKpCamcomplex_0_0_2_1"/>
<Product specieID="CKpCam"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction408" id="reaction408">
<Reactant specieID="CKpCamcomplex_0_0_2_2"/>
<Product specieID="CKpCam"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00096</forwardRate>
</Reaction>
<Reaction name="reaction409" id="reaction409">
<Reactant specieID="CKpCamcomplex_0_1_0_0"/>
<Product specieID="CKpCam"/>
<Product specieID="CKpCam1N"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction410" id="reaction410">
<Reactant specieID="CKpCamcomplex_0_1_0_1"/>
<Product specieID="CKpCam1N" power="2"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction411" id="reaction411">
<Reactant specieID="CKpCamcomplex_0_1_0_2"/>
<Product specieID="CKpCam1N"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction412" id="reaction412">
<Reactant specieID="CKpCamcomplex_0_1_1_0"/>
<Product specieID="CKpCam1N"/>
<Product specieID="CKpCam1C"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction413" id="reaction413">
<Reactant specieID="CKpCamcomplex_0_1_1_1"/>
<Product specieID="CKpCam1N"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction414" id="reaction414">
<Reactant specieID="CKpCamcomplex_0_1_1_2"/>
<Product specieID="CKpCam1N"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction415" id="reaction415">
<Reactant specieID="CKpCamcomplex_0_1_2_0"/>
<Product specieID="CKpCam1N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction416" id="reaction416">
<Reactant specieID="CKpCamcomplex_0_1_2_1"/>
<Product specieID="CKpCam1N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction417" id="reaction417">
<Reactant specieID="CKpCamcomplex_0_1_2_2"/>
<Product specieID="CKpCam1N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00096</forwardRate>
</Reaction>
<Reaction name="reaction418" id="reaction418">
<Reactant specieID="CKpCamcomplex_0_2_0_0"/>
<Product specieID="CKpCam"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction419" id="reaction419">
<Reactant specieID="CKpCamcomplex_0_2_0_1"/>
<Product specieID="CKpCam1N"/>
<Product specieID="CKpCamCa2N"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction420" id="reaction420">
<Reactant specieID="CKpCamcomplex_0_2_0_2"/>
<Product specieID="CKpCamCa2N" power="2"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction421" id="reaction421">
<Reactant specieID="CKpCamcomplex_0_2_1_0"/>
<Product specieID="CKpCamCa2N"/>
<Product specieID="CKpCam1C"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction422" id="reaction422">
<Reactant specieID="CKpCamcomplex_0_2_1_1"/>
<Product specieID="CKpCamCa2N"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction423" id="reaction423">
<Reactant specieID="CKpCamcomplex_0_2_1_2"/>
<Product specieID="CKpCamCa2N"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction424" id="reaction424">
<Reactant specieID="CKpCamcomplex_0_2_2_0"/>
<Product specieID="CKpCamCa2N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction425" id="reaction425">
<Reactant specieID="CKpCamcomplex_0_2_2_1"/>
<Product specieID="CKpCamCa2N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction426" id="reaction426">
<Reactant specieID="CKpCamcomplex_0_2_2_2"/>
<Product specieID="CKpCamCa2N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00096</forwardRate>
</Reaction>
<Reaction name="reaction427" id="reaction427">
<Reactant specieID="CKpCamcomplex_1_0_0_0"/>
<Product specieID="CKpCam"/>
<Product specieID="CKpCam1C"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction428" id="reaction428">
<Reactant specieID="CKpCamcomplex_1_0_0_1"/>
<Product specieID="CKpCam1N"/>
<Product specieID="CKpCam1C"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction429" id="reaction429">
<Reactant specieID="CKpCamcomplex_1_0_0_2"/>
<Product specieID="CKpCamCa2N"/>
<Product specieID="CKpCam1C"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction430" id="reaction430">
<Reactant specieID="CKpCamcomplex_1_0_1_0"/>
<Product specieID="CKpCam1C" power="2"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction431" id="reaction431">
<Reactant specieID="CKpCamcomplex_1_0_1_1"/>
<Product specieID="CKpCam1C"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction432" id="reaction432">
<Reactant specieID="CKpCamcomplex_1_0_1_2"/>
<Product specieID="CKpCam1C"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction433" id="reaction433">
<Reactant specieID="CKpCamcomplex_1_0_2_0"/>
<Product specieID="CKpCam1C"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction434" id="reaction434">
<Reactant specieID="CKpCamcomplex_1_0_2_1"/>
<Product specieID="CKpCam1C"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction435" id="reaction435">
<Reactant specieID="CKpCamcomplex_1_0_2_2"/>
<Product specieID="CKpCam1C"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00096</forwardRate>
</Reaction>
<Reaction name="reaction436" id="reaction436">
<Reactant specieID="CKpCamcomplex_1_1_0_0"/>
<Product specieID="CKpCam"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction437" id="reaction437">
<Reactant specieID="CKpCamcomplex_1_1_0_1"/>
<Product specieID="CKpCam1N"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction438" id="reaction438">
<Reactant specieID="CKpCamcomplex_1_1_0_2"/>
<Product specieID="CKpCamCa2N"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction439" id="reaction439">
<Reactant specieID="CKpCamcomplex_1_1_1_0"/>
<Product specieID="CKpCam1C"/>
<Product specieID="CKpCam1C1N"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction440" id="reaction440">
<Reactant specieID="CKpCamcomplex_1_1_1_1"/>
<Product specieID="CKpCam1C1N" power="2"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction441" id="reaction441">
<Reactant specieID="CKpCamcomplex_1_1_1_2"/>
<Product specieID="CKpCam1C1N"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction442" id="reaction442">
<Reactant specieID="CKpCamcomplex_1_1_2_0"/>
<Product specieID="CKpCam1C1N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction443" id="reaction443">
<Reactant specieID="CKpCamcomplex_1_1_2_1"/>
<Product specieID="CKpCam1C1N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction444" id="reaction444">
<Reactant specieID="CKpCamcomplex_1_1_2_2"/>
<Product specieID="CKpCam1C1N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00096</forwardRate>
</Reaction>
<Reaction name="reaction445" id="reaction445">
<Reactant specieID="CKpCamcomplex_1_2_0_0"/>
<Product specieID="CKpCam"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction446" id="reaction446">
<Reactant specieID="CKpCamcomplex_1_2_0_1"/>
<Product specieID="CKpCam1N"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction447" id="reaction447">
<Reactant specieID="CKpCamcomplex_1_2_0_2"/>
<Product specieID="CKpCamCa2N"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction448" id="reaction448">
<Reactant specieID="CKpCamcomplex_1_2_1_0"/>
<Product specieID="CKpCam1C"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction449" id="reaction449">
<Reactant specieID="CKpCamcomplex_1_2_1_1"/>
<Product specieID="CKpCam1C1N"/>
<Product specieID="CKpCam1C2N"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction450" id="reaction450">
<Reactant specieID="CKpCamcomplex_1_2_1_2"/>
<Product specieID="CKpCam1C2N" power="2"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction451" id="reaction451">
<Reactant specieID="CKpCamcomplex_1_2_2_0"/>
<Product specieID="CKpCam1C2N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction452" id="reaction452">
<Reactant specieID="CKpCamcomplex_1_2_2_1"/>
<Product specieID="CKpCam1C2N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction453" id="reaction453">
<Reactant specieID="CKpCamcomplex_1_2_2_2"/>
<Product specieID="CKpCam1C2N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00096</forwardRate>
</Reaction>
<Reaction name="reaction454" id="reaction454">
<Reactant specieID="CKpCamcomplex_2_0_0_0"/>
<Product specieID="CKpCam"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction455" id="reaction455">
<Reactant specieID="CKpCamcomplex_2_0_0_1"/>
<Product specieID="CKpCam1N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction456" id="reaction456">
<Reactant specieID="CKpCamcomplex_2_0_0_2"/>
<Product specieID="CKpCamCa2N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction457" id="reaction457">
<Reactant specieID="CKpCamcomplex_2_0_1_0"/>
<Product specieID="CKpCam1C"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction458" id="reaction458">
<Reactant specieID="CKpCamcomplex_2_0_1_1"/>
<Product specieID="CKpCam1C1N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction459" id="reaction459">
<Reactant specieID="CKpCamcomplex_2_0_1_2"/>
<Product specieID="CKpCam1C2N"/>
<Product specieID="CKpCamCa2C"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction460" id="reaction460">
<Reactant specieID="CKpCamcomplex_2_0_2_0"/>
<Product specieID="CKpCamCa2C" power="2"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction461" id="reaction461">
<Reactant specieID="CKpCamcomplex_2_0_2_1"/>
<Product specieID="CKpCamCa2C"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction462" id="reaction462">
<Reactant specieID="CKpCamcomplex_2_0_2_2"/>
<Product specieID="CKpCamCa2C"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00096</forwardRate>
</Reaction>
<Reaction name="reaction463" id="reaction463">
<Reactant specieID="CKpCamcomplex_2_1_0_0"/>
<Product specieID="CKpCam"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction464" id="reaction464">
<Reactant specieID="CKpCamcomplex_2_1_0_1"/>
<Product specieID="CKpCam1N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction465" id="reaction465">
<Reactant specieID="CKpCamcomplex_2_1_0_2"/>
<Product specieID="CKpCamCa2N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction466" id="reaction466">
<Reactant specieID="CKpCamcomplex_2_1_1_0"/>
<Product specieID="CKpCam1C"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction467" id="reaction467">
<Reactant specieID="CKpCamcomplex_2_1_1_1"/>
<Product specieID="CKpCam1C1N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction468" id="reaction468">
<Reactant specieID="CKpCamcomplex_2_1_1_2"/>
<Product specieID="CKpCam1C2N"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction469" id="reaction469">
<Reactant specieID="CKpCamcomplex_2_1_2_0"/>
<Product specieID="CKpCamCa2C"/>
<Product specieID="CKpCamCa2C1N"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction470" id="reaction470">
<Reactant specieID="CKpCamcomplex_2_1_2_1"/>
<Product specieID="CKpCamCa2C1N" power="2"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction471" id="reaction471">
<Reactant specieID="CKpCamcomplex_2_1_2_2"/>
<Product specieID="CKpCamCa2C1N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00096</forwardRate>
</Reaction>
<Reaction name="reaction472" id="reaction472">
<Reactant specieID="CKpCamcomplex_2_2_0_0"/>
<Product specieID="CKpCam"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.0</forwardRate>
</Reaction>
<Reaction name="reaction473" id="reaction473">
<Reactant specieID="CKpCamcomplex_2_2_0_1"/>
<Product specieID="CKpCam1N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>6e-05</forwardRate>
</Reaction>
<Reaction name="reaction474" id="reaction474">
<Reactant specieID="CKpCamcomplex_2_2_0_2"/>
<Product specieID="CKpCamCa2N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.00012</forwardRate>
</Reaction>
<Reaction name="reaction475" id="reaction475">
<Reactant specieID="CKpCamcomplex_2_2_1_0"/>
<Product specieID="CKpCam1C"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>3.2e-05</forwardRate>
</Reaction>
<Reaction name="reaction476" id="reaction476">
<Reactant specieID="CKpCamcomplex_2_2_1_1"/>
<Product specieID="CKpCam1C1N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>9.400000000000001e-05</forwardRate>
</Reaction>
<Reaction name="reaction477" id="reaction477">
<Reactant specieID="CKpCamcomplex_2_2_1_2"/>
<Product specieID="CKpCam1C2N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.000154</forwardRate>
</Reaction>
<Reaction name="reaction478" id="reaction478">
<Reactant specieID="CKpCamcomplex_2_2_2_0"/>
<Product specieID="CKpCamCa2C"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>6.4e-05</forwardRate>
</Reaction>
<Reaction name="reaction479" id="reaction479">
<Reactant specieID="CKpCamcomplex_2_2_2_1"/>
<Product specieID="CKpCamCa2C1N"/>
<Product specieID="CKpCamCa4"/>
<forwardRate>0.000124</forwardRate>
</Reaction>
<Reaction name="reaction480" id="reaction480">
<Reactant specieID="CKpCamcomplex_2_2_2_2"/>
<Product specieID="CKpCamCa4" power="2"/>
<forwardRate>0.00096</forwardRate>
</Reaction>

   <Reaction name="CKp_bind" id="CKp_bind">
     <Reactant specieID="CKp"/>
     <Reactant specieID="PP1"/>
	<Product specieID="CKpPP1"/>
	
	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>

    <Reaction name="CKpPP1_reac" id="CKpPP1_reac">
      <Reactant specieID="CKpPP1"/>
      <Product specieID="PP1"/>
      <Product specieID="CK"/>
      
      <forwardRate> 0.086e-3 </forwardRate>
      <reverseRate> 0 </reverseRate>
    </Reaction>
    
    
    <Reaction name="CKpCamCa4PP1_bind" id="CKpCamCa4PP1_bind">
      <Reactant specieID="CKpCamCa4"/>
      <Reactant specieID="PP1"/>
      	<Product specieID="CKpCamCa4PP1"/>
      
      
	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>
    
    <Reaction name="CKpCamCa4PP1_reac" id="CKpCamCa4PP1_reac">
      <Reactant specieID="CKpCamCa4PP1"/>
      <Product specieID="PP1"/>
      <Product specieID="CKCamCa4"/>
      
      <forwardRate> 0.086e-3 </forwardRate>
      <reverseRate> 0 </reverseRate>
    </Reaction>
    
    <Reaction name="CKpCamCa2NPP1_bind" id="CKpCamCa2NPP1_bind">
      <Reactant specieID="CKpCamCa2N"/>
      <Reactant specieID="PP1"/>
      	<Product specieID="CKpCamCa2NPP1"/>
      
      
	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>
    
    <Reaction name="CKpCamCa2NPP1_reac" id="CKpCamCa2NPP1_reac">
      <Reactant specieID="CKpCamCa2NPP1"/>
      <Product specieID="PP1"/>
      <Product specieID="CKCamCa2N"/>
      
      <forwardRate> 0.086e-3 </forwardRate>
      <reverseRate> 0 </reverseRate>
    </Reaction>
    <Reaction name="CKpCam1NPP1_bind" id="CKpCam1NPP1_bind">
      <Reactant specieID="CKpCam1N"/>
      <Reactant specieID="PP1"/>
      	<Product specieID="CKpCam1NPP1"/>
      
      
	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>
    
    <Reaction name="CKpCam1NPP1_reac" id="CKpCam1NPP1_reac">
      <Reactant specieID="CKpCam1NPP1"/>
      <Product specieID="PP1"/>
      <Product specieID="CKCam1N"/>
      
      <forwardRate> 0.086e-3 </forwardRate>
      <reverseRate> 0 </reverseRate>
    </Reaction>

    
    <Reaction name="CKpCamCa2CPP1_bind" id="CKpCamCa2CPP1_bind">
      <Reactant specieID="CKpCamCa2C"/>
      <Reactant specieID="PP1"/>
      	<Product specieID="CKpCamCa2CPP1"/>
      
      
	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>
    
    <Reaction name="CKpCamCa2CPP1_reac" id="CKpCamCa2CPP1_reac">
      <Reactant specieID="CKpCamCa2CPP1"/>
      <Product specieID="PP1"/>
      <Product specieID="CKCamCa2C"/>
      
      <forwardRate> 0.086e-3 </forwardRate>
      <reverseRate> 0 </reverseRate>
    </Reaction>


    <Reaction name="CKpCam1CPP1_bind" id="CKpCam1CPP1_bind">
      <Reactant specieID="CKpCam1C"/>
      <Reactant specieID="PP1"/>
      	<Product specieID="CKpCam1CPP1"/>
      
      
	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>
    
    <Reaction name="CKpCam1CPP1_reac" id="CKpCam1CPP1_reac">
      <Reactant specieID="CKpCam1CPP1"/>
      <Product specieID="PP1"/>
      <Product specieID="CKCam1C"/>
      
      <forwardRate> 0.086e-3 </forwardRate>
      <reverseRate> 0 </reverseRate>
    </Reaction>


    <Reaction name="CKpCam1C1NPP1_bind" id="CKpCam1C1NPP1_bind">
      <Reactant specieID="CKpCam1C1N"/>
      <Reactant specieID="PP1"/>
      	<Product specieID="CKpCam1C1NPP1"/>
      
      
	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>
    
    <Reaction name="CKpCam1C1NPP1_reac" id="CKpCam1C1NPP1_reac">
      <Reactant specieID="CKpCam1C1NPP1"/>
      <Product specieID="PP1"/>
      <Product specieID="CKCam1C1N"/>
      
      <forwardRate> 0.086e-3 </forwardRate>
      <reverseRate> 0 </reverseRate>
    </Reaction>


    <Reaction name="CKpCam1C2NPP1_bind" id="CKpCam1C2NPP1_bind">
      <Reactant specieID="CKpCam1C2N"/>
      <Reactant specieID="PP1"/>
      	<Product specieID="CKpCam1C2NPP1"/>
      
      
	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>
    
    <Reaction name="CKpCam1C2NPP1_reac" id="CKpCam1C2NPP1_reac">
      <Reactant specieID="CKpCam1C2NPP1"/>
      <Product specieID="PP1"/>
      <Product specieID="CKCam1C2N"/>
      
      <forwardRate> 0.086e-3 </forwardRate>
      <reverseRate> 0 </reverseRate>
    </Reaction>


    <Reaction name="CKpCamCa2C1NPP1_bind" id="CKpCamCa2C1NPP1_bind">
      <Reactant specieID="CKpCamCa2C1N"/>
      <Reactant specieID="PP1"/>
      	<Product specieID="CKpCamCa2C1NPP1"/>
      
      
	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>
    
    <Reaction name="CKpCamCa2C1NPP1_reac" id="CKpCamCa2C1NPP1_reac">
      <Reactant specieID="CKpCamCa2C1NPP1"/>
      <Product specieID="PP1"/>
      <Product specieID="CKCamCa2C1N"/>
      
      <forwardRate> 0.086e-3 </forwardRate>
      <reverseRate> 0 </reverseRate>
    </Reaction>

    
    <Reaction name="CKpCamPP1_bind" id="CKpCamPP1_bind">
      <Reactant specieID="CKpCam"/>
      <Reactant specieID="PP1"/>
      	<Product specieID="CKpCamPP1"/>
      
	
	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>
    
    <Reaction name="CKpCamPP1_reac" id="CKpCamPP1_reac">
      <Reactant specieID="CKpCamPP1"/>
      <Product specieID="PP1"/>
      <Product specieID="CKCam"/>
      
      <forwardRate> 0.086e-3 </forwardRate>
      <reverseRate> 0 </reverseRate>
    </Reaction>




    <!-- PP1 inhibitor -->
    
    <!--1) I1 + PKAc <-> I1PKAc -->
    <Reaction name = "I1_bind" id="I1_bind">
	<Reactant specieID="I1"/>
        <Reactant specieID="PKAc"/>
	<Product specieID="I1PKAc"/>

	<forwardRate>0.0014e-3</forwardRate>
	<reverseRate>0.0056</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

    <!--2) I1PKAc -> Ip35 + PKAc: default kb=0 -->
    <Reaction name = "I1PKAc_reac" id="I1PKAc_reac">
	<Reactant specieID="I1PKAc"/>
        <Product specieID="Ip35"/>
	<Product specieID="PKAc"/>

	<forwardRate>1.4e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

     <Reaction name = "Ip35pp2b_bind" id="Ip35pp2b_bind">
	<Reactant specieID="Ip35"/>
        <Reactant specieID="CaNCamCa4"/>
	<Product specieID="Ip35CaNCamCa4"/>

	<forwardRate>.09625e-03</forwardRate>
	<reverseRate>0.33</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

    <!--5) Ip35pp2b -> I1 + CaN -->
    <Reaction name = "Ip35pp2b_reac" id="Ip35pp2b_reac">
	<Reactant specieID="Ip35CaNCamCa4"/>
        <Product specieID="I1"/>
	<Product specieID="CaNCamCa4"/>

	<forwardRate>0.055</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

    <!--6) Ip35pp1 + CaN <-> Ip35p1p2 - lower affinity since PP1 is steric hinderance-->
    <Reaction name = "Ip35pp1_bind" id="Ip35pp1_bind">
	<Reactant specieID="Ip35PP1"/>
        <Reactant specieID="CaNCamCa4"/>
	<Product specieID="Ip35PP1CaNCamCa4"/>

	<forwardRate>.009625e-03</forwardRate>
	<reverseRate>0.033</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

    <!--7a) Ip35p1p2 -> I1 + PP1+CaN -->
    <Reaction name = "Ip35p1p2_reac" id="Ip35p1p2_reac">
	<Reactant specieID="Ip35PP1CaNCamCa4"/>
        <Product specieID="I1"/>
        <Product specieID="PP1"/>
	<Product specieID="CaNCamCa4"/>

	<forwardRate>0.0055</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

    <!-- Ip35 + PP1 <-> Ip35PP1 -->
    <Reaction name = "Ip35+PP1" id="Ip35+PP1">
	<Reactant specieID="Ip35"/>
        <Reactant specieID="PP1"/>
	<Product specieID="Ip35PP1"/>

    <forwardRate> 1.00e-6 </forwardRate>
        <reverseRate> 1.10e-6 </reverseRate>
    </Reaction>

<!-- Ng binding to Cam -->
<!-- Ng+Cam <-> NgCam -->
    <Reaction name = "Ng+Cam" id="Ng+Cam">
	<Reactant specieID="Ng"/>
        <Reactant specieID="Cam"/>
	<Product specieID="NgCam"/>

    <forwardRate> 0.0280e-3 </forwardRate>
        <reverseRate> 0.036 </reverseRate>
    </Reaction>
	
	
<!-- Cam to CaNCam.-->
    <!-- Cam or CamC2N or CamC2C or CamCa4 binding to CaN.  Check rates for microscopic reversibility -->
     <!--4x) Cam    +   CaN     <->  CaNCam     (in xpp: k33a=1 k_33a=3)  -->

  <Reaction name="Cam+CaN--CaNCam reac" id="Cam+CaN--CaNCam_id">
    <Reactant specieID="Cam"/>
    <Reactant specieID="CaN"/>
    <Product specieID="CaNCam"/>
    
    <forwardRate> 7.98e-13 </forwardRate>
    <reverseRate>  3.19e-6    </reverseRate>
  </Reaction>


  <Reaction name="Cam1C+CaN--CaNCam1C reac" id="Cam1C+CaN--CaNCam1C_id">
    <Reactant specieID="Cam1C"/>
    <Reactant specieID="CaN"/>
    <Product specieID="CaNCam1C"/>
    
    <forwardRate> 1.334e-10       </forwardRate>
    <reverseRate> 3.19e-6  </reverseRate>
  </Reaction>

    <Reaction name="CamCa2C+CaN--CaNCamCa2C reac" id="CamCa2C+CaN--CaNCamCa2C_id">
    <Reactant specieID="CamCa2C"/>
    <Reactant specieID="CaN"/>
    <Product specieID="CaNCamCa2C"/>
    
    <forwardRate>   1.23e-9     </forwardRate>
    <reverseRate>  3.19e-6     </reverseRate>
  </Reaction>
  
  <Reaction name="Cam1N+CaN--CaNCam1N reac" id="Cam1N+CaN--CaNCam1N_id">
    <Reactant specieID="Cam1N"/>
    <Reactant specieID="CaN"/>
    <Product specieID="CaNCam1N"/>
    
    <forwardRate> 6.65e-11     </forwardRate>
    <reverseRate>  3.19e-6     </reverseRate>
  </Reaction>

  <Reaction name="CamCa2N+CaN--CaNCamCa2N reac" id="CamCa2N+CaN--CaNCamCa2N_id">
    <Reactant specieID="CamCa2N"/>
    <Reactant specieID="CaN"/>
    <Product specieID="CaNCamCa2N"/>
    
    <forwardRate> 4.16e-9  </forwardRate>
    <reverseRate> 3.19e-6 </reverseRate>
  </Reaction>


  <Reaction name="Cam1C1N+CaN--CaNCam1C1N reac" id="Cam1C1N+CaN--CaNCam1C1N_id">
    <Reactant specieID="Cam1C1N"/>
    <Reactant specieID="CaN"/>
    <Product specieID="CaNCam1C1N"/>
    
    <forwardRate> 6.65e-9       </forwardRate>
    <reverseRate>  3.19e-6     </reverseRate>
  </Reaction>

  <Reaction name="CamCa2C1N+CaN--CaNCamCa2C1N reac" id="CamCa2C1N+CaN--CaNCamCa2C1N_id">
    <Reactant specieID="CamCa2C1N"/>
    <Reactant specieID="CaN"/>
    <Product specieID="CaNCamCa2C1N"/>
    
    <forwardRate> 1.02e-7       </forwardRate>
    <reverseRate>  3.19e-6     </reverseRate>
  </Reaction>

  <Reaction name="Cam1C2N+CaN--CaNCam1C2N reac" id="Cam1C2N+CaN--CaNCam1C2N_id">
    <Reactant specieID="Cam1C2N"/>
    <Reactant specieID="CaN"/>
    <Product specieID="CaNCam1C2N"/>
    
    <forwardRate> 4.16e-7 </forwardRate>
    <reverseRate>  3.19e-6</reverseRate>
  </Reaction>

  <Reaction name="CamCa4+CaN--CaNCamCa4 reac" id="CamCa4+CaN--CaNCamCa4_id">
    <Reactant specieID="CamCa4"/>
    <Reactant specieID="CaN"/>
    <Product specieID="CaNCamCa4"/>
    
    <forwardRate> 6.4e-6       </forwardRate>
    <reverseRate> 3.19e-6      </reverseRate>
  </Reaction>

  <Reaction name="CaNreaction1" id="CaNreaction1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaNCam"/>
    <Product specieID="CaNCam1C"/>
    <forwardRate>0.00356</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="CaNreaction3" id="CaNreaction3">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaNCam1N"/>
    <Product specieID="CaNCam1C1N"/>
    <forwardRate>0.002137</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  
  <Reaction name="CaNreaction5" id="CaNreaction5">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaNCamCa2N"/>
    <Product specieID="CaNCam1C2N"/>
    <forwardRate>0.0021375</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="CaNreaction7" id="CaNreaction7">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaNCam1C"/>
    <Product specieID="CaNCamCa2C"/>
    <forwardRate>0.0088055</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="CaNreaction9" id="CaNreaction9">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaNCam1C1N"/>
    <Product specieID="CaNCamCa2C1N"/>
    <forwardRate>0.01465</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="CaNreaction11" id="CaNreaction11">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaNCam1C2N"/>
    <Product specieID="CaNCamCa4"/>
    <forwardRate>0.01469</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="CaNreaction13" id="CaNreaction13">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaNCam"/>
    <Product specieID="CaNCam1N"/>
    <forwardRate>0.89292</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="CaNreaction15" id="CaNreaction15">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaNCam1N"/>
    <Product specieID="CaNCamCa2N"/>
    <forwardRate>0.12199</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="CaNreaction17" id="CaNreaction17">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaNCam1C"/>
    <Product specieID="CaNCam1C1N"/>
    <forwardRate>0.5341</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="CaNreaction19" id="CaNreaction19">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaNCam1C1N"/>
    <Product specieID="CaNCam1C2N"/>
    <forwardRate>0.12199</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="CaNreaction21" id="CaNreaction21">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaNCamCa2C"/>
    <Product specieID="CaNCamCa2C1N"/>
    <forwardRate>0.8886</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="CaNreaction23" id="CaNreaction23">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaNCamCa2C1N"/>
    <Product specieID="CaNCamCa4"/>
    <forwardRate>0.122</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>

<!-- G_protein part -->

    <Reaction name = "L_buffer" id="L_Buffer">
	<Reactant specieID="L"/>
	<Product specieID="LOut"/>
	<forwardRate>5e-4</forwardRate>
	<reverseRate>2e-9</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 1) L + R <-> LR    -->
    <Reaction name = "LR_bind" id="LR_bind">
	<Reactant specieID="L"/>
	<Reactant specieID="R"/>
	<Product specieID="LR"/>

	<forwardRate>0.005555e-3</forwardRate><!--ten times higer than previously-->
	<reverseRate>5e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 2) LR + Gs <-> LRGs    -->
    <Reaction name = "LRGs_bind" id="LRGs_bind">
	<Reactant specieID="LR"/>
	<Reactant specieID="Gs"/>
	<Product specieID="LRGs"/>

	<forwardRate>0.0006e-3</forwardRate>
	<reverseRate>0.001e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 3) Gs + R <-> GsR    -->
    <Reaction name = "GsR_bind" id="GsR_bind">
	<Reactant specieID="Gs"/>
	<Reactant specieID="R"/>
	<Product specieID="GsR"/>

	<forwardRate>0.00004e-3</forwardRate>
	<reverseRate>0.0003e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>


<!-- 4) GsR + L <-> LRGs    -->
    <Reaction name = "GsRL_bind" id="GsRL_bind">
	<Reactant specieID="GsR"/>
	<Reactant specieID="L"/>
	<Product specieID="LRGs"/>

	<forwardRate>0.0025e-3</forwardRate>
	<reverseRate>0.5e-3</reverseRate>
	<Q10>0.2</Q10>
</Reaction>

<!-- 5a) LRGs -> LRGsbg + GasGTP -->
    <Reaction name = "GasGTP_bind" id="GasGTP_bind">
	<Reactant specieID="LRGs"/>
	<Product specieID="LR"/>
	<Product specieID="GasGTP"/>
	<Product specieID="Gsbg"/>

	<forwardRate>20e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- AMC 06/27/12: Below are the reactions for PKA-mediated LR desensitization and subsequent Gs-to-Gi switching --> 
<!-- 5c1) LR + PKAc -> PKAcLR -->
    <Reaction name = "LR_phos" id="LR_phos">
	<Reactant specieID="LR"/>
	<Reactant specieID="PKAc"/>
	<Product specieID="PKAcLR"/>

	<forwardRate>0.008e-4</forwardRate>
	<reverseRate>44.8e-04</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 5d1) PKAcLR -> pLR + PKAc -->
    <Reaction name = "pLR_reac" id="pLR_reac">
	<Reactant specieID="PKAcLR"/>
	<Product specieID="pLR"/>
	<Product specieID="PKAc"/>

	<forwardRate>1.00e-03</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 5c2) pLR + PKAc -> PKApcLR -->
    <Reaction name = "pLR_phos" id="pLR_phos">
	<Reactant specieID="pLR"/>
	<Reactant specieID="PKAc"/>
	<Product specieID="PKAcpLR"/>

	<forwardRate>0.008e-04</forwardRate><!-- cooperative.  Non-coop would have 0.004 -->
	<reverseRate>44.8e-04</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 5d2) PKAcpLR -> ppLR + PKAc -->
    <Reaction name = "ppLR_reac" id="ppLR_reac">
	<Reactant specieID="PKAcpLR"/>
	<Product specieID="ppLR"/>
	<Product specieID="PKAc"/>

	<forwardRate>0.01712e-03</forwardRate>
	<reverseRate>0</reverseRate><!-- Should be zero -->
	<Q10>0.2</Q10>
    </Reaction>


<!-- 5e) ppLR + Gi -> ppLRGi -->
    <Reaction name = "ppLRGi_bind" id="ppLRGi_bind">
	<Reactant specieID="ppLR"/>
	<Reactant specieID="Gi"/>
	<Product specieID="ppLRGi"/>

	<forwardRate>0.15e-3</forwardRate>
	<reverseRate>0.25e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 5f) ppLRGi -> ppLRGibg + GaiGTP -->
    <Reaction name = "GaiGTP_bind" id="GaiGTP_bind">
	<Reactant specieID="ppLRGi"/>
	<Product specieID="ppLR"/>
	<Product specieID="GaiGTP"/>
	<Product specieID="Gibg"/>
	
	<forwardRate>0.125e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 5h1) pLR -> LR -->
   <Reaction name = "pLR_dephos" id="pLR_dephos">
	<Reactant specieID="pLR"/>
	<Product specieID="LR"/>

	<forwardRate>0.25e-05</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 5h2) ppLR -> pLR -->
   <Reaction name = "ppLR_dephos" id="ppLR_dephos">
	<Reactant specieID="ppLR"/>
	<Product specieID="pLR"/>

	<forwardRate>0.25e-05</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>



    
<!-- 6a) GasGTP -> GasGDP    -->
    <Reaction name = "GasGTP_disso" id="GasGTP_disso">
	<Reactant specieID="GasGTP"/>
	<Product specieID="GasGDP"/>

        <forwardRate>10e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 7a) GasGDP + Gbg -> Gs    -->
    <Reaction name = "Gs_form" id="Gs_form">
	<Reactant specieID="GasGDP"/>
        <Reactant specieID="Gsbg"/>
	<Product specieID="Gs"/>

        <forwardRate>100e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
    
<!-- 6b) GaiGTP -> GaiGDP    -->
    <Reaction name = "GaiGTP_disso" id="GaiGTP_disso">
	<Reactant specieID="GaiGTP"/>
	<Product specieID="GaiGDP"/>

        <forwardRate>0.125e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
    
<!-- 7b) GaiGDP + Gbg -> Gi    -->
    <Reaction name = "Gi_form" id="Gi_form">
	<Reactant specieID="GaiGDP"/>
        <Reactant specieID="Gibg"/>
	<Product specieID="Gi"/>

        <forwardRate>1.25e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>






<!-- 1a) GasGTP + AC1 <-> AC1GasGTP   -->

    <Reaction name = "GasGTP_AC1_reac" id="GasGTP_AC1_reac">
	<Reactant specieID="GasGTP"/>
	<Reactant specieID="AC1"/>
	<Product specieID="AC1GasGTP"/>

	<forwardRate>0.0385e-3</forwardRate>
	<reverseRate>10e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>


<!-- 1b) AC1Gas + CamCa4 <-> AC1GasGTPCamCa4    -->
    <Reaction name = "AC1GasGTP_CamCa4_Reac" id="AC1GasGTP_CamCa4_Reac">
	<Reactant specieID="AC1GasGTP"/>
	<Reactant specieID="CamCa4"/>
	<Product specieID="AC1GasGTPCamCa4"/>

	<forwardRate>12.0e-6</forwardRate><!-- K_D = 75 nM -->
	<reverseRate>0.9e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
    
<!-- 1c) AC1GasGTPCamCa4 + ATP <-> AC1GasGTPCamCa4ATP    -->
    <Reaction name = "AC1GasGTPCamCa4_ATP_Reac" id="AC1GasGTPCamCa4_ATP_Reac">
	<Reactant specieID="AC1GasGTPCamCa4"/>
	<!--Reactant specieID="ATP"/-->
	<Product specieID="AC1GasGTPCamCa4ATP"/>

	<!--if ATP:forwardRate>0.01e-3</forwardRate-->
	<forwardRate>20</forwardRate>
	<reverseRate>2273e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 1d) AC1GasGTPCamCa4ATP -> AC1GasGTPCamCa4 + cAMP    -->
    <Reaction name = "AC1GasGTPCamCa4ATP_diss" id="AC1GasGTPCamCa4ATP_diss">
	<Reactant specieID="AC1GasGTPCamCa4ATP"/>
	<Product specieID="cAMP"/>
	<Product specieID="AC1GasGTPCamCa4"/>

	<forwardRate>0.02842</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
    
<!-- 2a) GaiGTP + AC1GasGTP <-> AC1GasGTPGaiGTP   -->
    <Reaction name = "GaiGTP_AC1GasGTP_reac" id="GaiGTP_AC1GasGTP_reac">
	<Reactant specieID="GaiGTP"/>
	<Reactant specieID="AC1GasGTP"/>
	<Product specieID="AC1GasGTPGaiGTP"/>

	<forwardRate>0.0625e-3</forwardRate>
	<reverseRate>10e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 2b) AC1GasGTPGaiGTP + CamCa4 <-> AC1GasGTPGaiGTPCamCa4    -->
    <Reaction name = "AC1GasGTPGaiGTP_CamCa4_Reac" id="AC1GasGTPGaiGTP_CamCa4_Reac">
	<Reactant specieID="AC1GasGTPGaiGTP"/>
	<Reactant specieID="CamCa4"/>
	<Product specieID="AC1GasGTPGaiGTPCamCa4"/>

	<forwardRate>0.006e-3</forwardRate>
	<reverseRate>0.9e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
    <!-- 2c) AC1GasGTPGaiGTPCamCa4 + ATP <->AC1GasGTPGaiGTPCamCa4ATP    -->
    <!-- forward and backward rates (maybe) should be 100% lower to match 2d-->
    <Reaction name = "AC1GasGTPGaiGTPCamCa4_ATP_Reac" id="AC1GasGTPGaiGTPCamCa4_ATP_Reac">
	<Reactant specieID="AC1GasGTPGaiGTPCamCa4"/>
	<!--Reactant specieID="ATP"/-->
	<Product specieID="AC1GsGiCamCa4ATP"/>

	<!--if ATP:forwardRate>0.01e-3</forwardRate-->
	<forwardRate>20</forwardRate>
	<reverseRate>2273e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 2d) AC1GasGTPGaiGTPCamCa4ATP ->AC1GasGTPGaiGTPCamCa4 + cAMP    -->
    <Reaction name = "AC1GsGiCamCa4ATP_diss" id="AC1GsGiCamCa4ATP_diss">
	<Reactant specieID="AC1GsGiCamCa4ATP"/>
	<Product specieID="cAMP"/>
	<Product specieID="AC1GasGTPGaiGTPCamCa4"/>

	<forwardRate>2.842e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 3a) GaiGTP + AC1Cam4 <-> AC1CamCa4GaiGTP   -->
    <Reaction name = "GaiGTP_AC1CamCa4_reac" id="GaiGTP_AC1CamCa4_reac">
	<Reactant specieID="GaiGTP"/>
	<Reactant specieID="AC1CamCa4"/>
	<Product specieID="AC1GaiGTPCamCa4"/>

	<forwardRate>0.0625e-3</forwardRate>
	<reverseRate>10e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 3b) AC1GaiGTP + CamCa4 <-> AC1GaiGTPCamCa4    -->
<!-- 3c) AC1GaiGTPCamCa4 + ATP <-> AC1GaiGTPCamCa4ATP    -->
    <Reaction name = "AC1GaiGTPCamCa4_ATP_Reac" id="AC1GaiGTPCamCa4_ATP_Reac">
	<Reactant specieID="AC1GaiGTPCamCa4"/>
	<!--Reactant specieID="ATP"/-->
	<Product specieID="AC1GaiGTPCamCa4ATP"/>

	<!--if ATP:forwardRate>0.01e-3</forwardRate-->
	<forwardRate>20</forwardRate>
	<reverseRate>2273e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 3d) AC1GaiGTPCamCa4ATP -> AC1GaiGTPCamCa4 + cAMP    -->
    <Reaction name = "AC1GaiGTPCamCa4ATP_diss" id="AC1GaiGTPCamCa4ATP_diss">
	<Reactant specieID="AC1GaiGTPCamCa4ATP"/>
	<Product specieID="cAMP"/>
	<Product specieID="AC1GaiGTPCamCa4"/>

	<forwardRate>0.5684e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 5) AC1 + CamCa4 <-> AC1Cam    -->
    <Reaction name = "AC1CamCa4_Reac" id="AC1CamCa4_Reac">
	<Reactant specieID="AC1"/>
	<Reactant specieID="CamCa4"/>
	<Product specieID="AC1CamCa4"/>

	<forwardRate>0.0045e-3</forwardRate><!-- K_D = 150-200 nM, Wang&Storm Molec Pharm -->
	<reverseRate>0.9e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 6) AC1Cam + ATP <-> AC1CamATP    -->
    <Reaction name = "AC1CamCa4ATP_bind" id="AC1CamCa4ATP_bind">
	<Reactant specieID="AC1CamCa4"/>
	<!--Reactant specieID="ATP"/-->
	<Product specieID="AC1CamCa4ATP"/>

	<!--if ATP:forwardRate>0.01e-3</forwardRate-->
	<forwardRate>20</forwardRate>
	<reverseRate>2273e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 7) AC1CamATP -> AC1Cam +cAMP    -->
    <Reaction name = "AC1CamCa4ATP_disso" id="AC1CamCa4ATP_disso">
	<Reactant specieID="AC1CamCa4ATP"/>
	<Product specieID="cAMP"/> 
	<Product specieID="AC1CamCa4"/>

	<forwardRate>5.684e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
    
<!-- 6a) AC1GasGTP + GasGTP <-> AC1GasGTPGaiGTP    -->
    <Reaction name = "AC1GaiGTP_GasGTP_Reac" id="AC1GaiGTP_GasGTP_Reac">
	<Reactant specieID="AC1GaiGTP"/>
	<Reactant specieID="GasGTP"/>
	<Product specieID="AC1GasGTPGaiGTP"/>

	<forwardRate>0.0000625</forwardRate>
	<reverseRate>10e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!--AC1 is fine - thermodynamically balanced.  But what is source for affinity to ATP?  2273 is very large backward rate;large Kb prevents large E-S intermidiate complex, Kd(cAMP)=2.3(+-)0.8 mM, low affinity -->


<!-- 8) AC8 + CamCa4 <-> AC8Cam   -->
    <Reaction name = "AC8_CamCa4_bind" id="AC8_CamCa4_bind">
	<Reactant specieID="AC8"/>
	<Reactant specieID="CamCa4"/>
	<Product specieID="AC8CamCa4"/>

	<forwardRate>0.00125e-3</forwardRate> <!-- K_D = 800 nM, Wang&Storm Molec Pharm-->
	<reverseRate>1e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 9) AC8Cam + ATP <-> AC8CamATP   -->
    <Reaction name = "AC8CamCa4_ATP_bind" id="AC8CamCa4_ATP_bind">
	<Reactant specieID="AC8CamCa4"/>
	<!--Reactant specieID="ATP"/-->
	<Product specieID="AC8CamCa4ATP"/>

	<!--if ATP:forwardRate>0.01e-3</forwardRate-->
	<forwardRate>20</forwardRate>
	<reverseRate>2273e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 10) AC8CamATP -> AC8Cam + cAMP   -->
    <Reaction name = "AC8CamCa4ATP_disso" id="AC8CamCa4ATP_disso">
	<Reactant specieID="AC8CamCa4ATP"/>
	<Product specieID="cAMP"/>
	<Product specieID="AC8CamCa4"/>

	<forwardRate>2.842e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>


<!-- ******* PKA from Asia Hippo Model ********* -->     
    <!--1) PKA + 2camp <-> PKAcAMP2 -->
    <Reaction name = "PKA_bind" id="PKA_bind">
	<Reactant specieID="PKA"/>
        <Reactant specieID="cAMP" n="2"/>
	<Product specieID="PKAcAMP2"/>


        <forwardRate> 0.261e-6 </forwardRate>
	<reverseRate> 0.060e-3 </reverseRate>
    </Reaction>

    <!--2) PKAcAMP2 + 2cAMP <-> PKAcAMP4 -->
    <Reaction name = "PKAcAMP2_bind" id="PKAcAMP2_bind">
	<Reactant specieID="PKAcAMP2"/>
        <Reactant specieID="cAMP" n="2"/>
	<Product specieID="PKAcAMP4"/>

	<forwardRate> 0.35e-6 </forwardRate>
	<reverseRate> 0.6e-3 </reverseRate>
    </Reaction>

<!--3) PKAcAMP4 <-> 2PKAr(as dimer) + 2PKAc(monomers) -->
    <Reaction name = "PKAcAMP4_diss" id="PKAcAMP4_diss">
	<Reactant specieID="PKAcAMP4"/>
	<Product specieID="PKAr" />
	<Product specieID="PKAc" n="2"/>  

	<forwardRate> 0.24e-3 </forwardRate>
	<reverseRate> 0.0255e-3 </reverseRate>
    </Reaction>

<!-- PDE Part -->
    <!-- PDE4 buff for cAMP cAMP + PDE4  <-> PDE4cAMP -->
    <Reaction name = "PDE4 enzyme1" id="PDE4bind">
        <Reactant specieID="PDE4"           />
        <Reactant specieID="cAMP"            />
        <Product  specieID="PDE4cAMP"       />
        <forwardRate> 0.0216e-03  </forwardRate>
        <reverseRate> 68.95e-03    </reverseRate>
    </Reaction>

    <!--  PDE4cAMP -> AMP + PDE4 -->
    <Reaction name = "PDE4 actvcomp" id="PDE4cat">
        <Reactant specieID="PDE4cAMP"       />
        <Product  specieID="PDE4"           />
        <Product  specieID="AMP"             />
        <forwardRate> 17.233e-03    </forwardRate>
        <reverseRate> 0            </reverseRate>
</Reaction>

   <!--   PKAc + PDE4 -> PKAcPDE4 -->
    <Reaction name = "PDE4 phosp1" id="phospPDE41">
        <Reactant specieID="PKAc"            />
        <Reactant specieID="PDE4"           />
        <Product  specieID="PKAcPDE4"       />
        <forwardRate> 4.28e-7  </forwardRate>
        <reverseRate>  0.00056    </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!--   PKAcPDE4 -> PKAc + pPDE4 -->
    <Reaction name = "PDE4 phosp2" id="phospPDE42">
        <Reactant specieID="PKAcPDE4"       />
        <Product  specieID="pPDE4"          />
        <Product  specieID="PKAc"            />
        <forwardRate> 0.000125     </forwardRate>
        <reverseRate> 0            </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!--   pPDE4 -> PDE4 -->
    <Reaction name = "PDE4 d_phosp" id="dphospPDE4">
        <Reactant specieID="pPDE4"          />
        <Product  specieID="PDE4"           />
        <forwardRate> 2.5e-6    </forwardRate>
        <reverseRate> 0            </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!--   cAMP + pPDE4  <-> pPDE4cAMP -->
    <Reaction name = "pPDE4 enzyme1" id="pPDE4bind">
        <Reactant specieID="pPDE4"           />
        <Reactant specieID="cAMP"             />
        <Product  specieID="pPDE4cAMP"       />
        <forwardRate> 0.000433175   </forwardRate>
        <reverseRate> 1.379 </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!--   pPDE4cAMP -> AMP + pPDE4 -->
    <Reaction name = "pPDE4 actvcomp" id="pPDE4cat">
        <Reactant specieID="pPDE4cAMP"       />
        <Product  specieID="pPDE4"           />
        <Product  specieID="AMP"              />
        <forwardRate>0.3446674   </forwardRate>
        <reverseRate> 0            </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!--   PDE4cAMP + PKAc  <-> PKAc_PDE4_cAMP -->
    <Reaction name = "PKAc_PDE4_cAMP-bind" id="PKAc_PDE4_cAMP-bind">
        <Reactant specieID="PDE4cAMP"        />
        <Reactant specieID="PKAc"             />
        <Product  specieID="PKAc_PDE4_cAMP"  />
        <forwardRate> 4.280e-7  </forwardRate>
        <reverseRate>  0.00056    </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!--  PKAc_PDE4_cAMP -> pPDE4cAMP + PKAc -->
    <Reaction name = "PKAc_PDE4_cAMP-diss" id="PKAc_PDE4_cAMP-diss">
        <Reactant specieID="PKAc_PDE4_cAMP"  />
        <Product  specieID="pPDE4cAMP"       />
        <Product  specieID="PKAc"             />
        <forwardRate> 0.000125    </forwardRate>
        <reverseRate> 0            </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>
      
    
     

<!--1) PDE1 + CamCa4 <-> PDE1Cam -->
       <Reaction name = "PDE1CamCa4_bind" id="PDE1CamCa4_bind">
	<Reactant specieID="PDE1"/>
	<Reactant specieID="CamCa4"/>
	<Product specieID="PDE1CamCa4"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!--2) PDE1Cam + cAMP <-> PDE1Cam_cAMP(=PDE1cAMP) -->
       <Reaction name = "PDE1CamCa4cAMP_bind" id="PDE1CamCa4cAMP_bind">
	<Reactant specieID="PDE1CamCa4"/>
	<Reactant specieID="cAMP"/>
	<Product specieID="PDE1CamCa4cAMP"/>

	<forwardRate>0.0046e-3</forwardRate>
	<reverseRate>44e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!--3) PDE1cAMP -> PDE1Cam + AMP -->
       <Reaction name = "PDE1cAMP_disso" id="PDE1cAMP_disso">
	<Reactant specieID="PDE1CamCa4cAMP"/>
	<Product specieID="PDE1CamCa4"/>
	<Product specieID="AMP"/>

	<forwardRate>11e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
       </Reaction>

<!--(Epac binding) Epac + cAMP <-> EpacAMP-->
    <Reaction name = "Epac+cAmp--EpacAMP" id="Epac+cAMP--EpacAMP">
        <Reactant specieID="Epac"           />
        <Reactant  specieID="cAMP"               />
        <Product  specieID="EpacAMP"               />

        <forwardRate> 0.000121e-3   </forwardRate>
        <reverseRate> 0.1452e-3   </reverseRate>
    </Reaction>


</ReactionScheme>
